PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = sounddevice
  Data filename = './' + '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  End Message = Thank you for your participation!
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['PRESS-B_Schedule_Entry.csv', 'stimuli/ha.wav', 'stimuli/ding.wav']
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  backgroundFit = fill
  colPriority = {'': ''}
  expName = Continuous Choice test
  frameRate = 60
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      desc = Presents a welcome message and initializes data collection. The participant begins the experiment contingent upon their press of the 'return' key. Session number, response time, number of points, points earned (as a ternary value), schedule, and button type are collected. This routine is essential for the program to function.
      saveStartStop = False
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    CodeComponent welcome_and_data_collection
      Code Type = Both
      Before JS Experiment:
        // Initializations to appease the gods, these do nothing else
        let currentLoop;
        let frameDur;
        let WelcomeClock = [];
        let routine_clock = [];
        let TrialClock = [];
        let GoodbyeClock = [];
        let globalClock = [];
        let routineTimer = [];
        let t = 0;
        let frameN = 0;
        let continueRoutine = true;
        let routineForceEnded = false;
        let WelcomeMaxDurationReached = false;

        // --- Added: per-routine MaxDurationReached flags (same pattern as WelcomeMaxDurationReached) ---
        let TrialMaxDurationReached = false;
        let GoodbyeMaxDurationReached = false;

        // --- Added: MaxDuration values assigned as null inside each RoutineBegin ---
        let WelcomeMaxDuration = null;
        let TrialMaxDuration = null;
        let GoodbyeMaxDuration = null;

        // --- Added: component arrays iterated in RoutineEnd functions ---
        let WelcomeComponents = [];
        let TrialComponents = [];
        let GoodbyeComponents = [];

        // --- Added: loop handler referenced in LoopEnd and TrialRoutineBegin ---
        let Selection_type;

        // --- Added: welcome flag set inside WelcomeRoutineBegin ---
        let welcome = false;
      Begin Experiment:
        from psychopy import visual, core, event, data
        import pandas as pd

        #Initializes points
        points = 0

        #Created an Excel spreadsheet
        thisExp = data.ExperimentHandler(
            name='PRESS-B_Group 1',
            extraInfo=expInfo,
            dataFileName=f"data/Group_1/PRESS-B_{expInfo['participant']}/PRESS-B_{expInfo['participant']}"
        )
        #Reads file paths from CSV
        schedule_df = pd.read_csv('PRESS-B_1ABA_ABB_Group1_War.csv', na_values=['x']) #Reads CSV

        ding_path = schedule_df['Ding_Path'].iloc[0]
        womp_path = schedule_df['Womp_Path'].iloc[0]
        keyboard_path = schedule_df['Keyboard_Path'].iloc[0]

        #Initializes data for collection
        trialClock = core.Clock()
        session_number = []
        schedule = []
        bluePressTimes = []
        yellowPressTimes = []
        ctrlPressTimes = []
        point_earned = []
        responseTimes = []
        lastResponseTime = None

        #Tells the user how to begin the experiment
        welcome_message = visual.TextStim(win,
            text="Hello, thank you for participating in the experiment.\nIf you wish to stop participating, hit the 'Escape' key; however, you will not receive sona credit.\nHit 'Enter' when you are ready to begin.",
            height=0.05, color=[1,1,1], pos=[0, 0])

        #Shows welcome message, is a function for efficency
        def draw_welcome():
            welcome_message.draw()
            win.flip()
      Begin JS Experiment:
        let schedule_df = [];
        let all_schedules = [];

        let csvRaw = psychoJS.serverManager.getResource('PRESS-B_Schedule_Entry.csv');
        if (!csvRaw) {
            throw new Error("CSV failed to load from PsychoJS resources.");
        }

        let csvText;
        if (typeof csvRaw === 'string') {
            csvText = csvRaw;
        } else {
            csvText = new TextDecoder('utf-8').decode(csvRaw);
        }

        const lines = csvText
            .replace(/\r\n/g, '\n')
            .replace(/\r/g, '\n')
            .trim()
            .split('\n')
            .filter(line => line.trim() !== '');

        const headers = lines[0].split(',').map(h => h.trim());

        window.schedule_df = lines.slice(1).map(line => {
            const values = line.split(',');
            let obj = {};
            headers.forEach((h, i) => {
                let val = values[i] !== undefined ? values[i].trim() : '';
                obj[h] = (val === 'x' || val === '') ? null :
                         (!isNaN(val) && val !== '' ? Number(val) : val);
            });
            return obj;
        });

        window.schedule_df = window.schedule_df.filter(row =>
            row.Schedule_number !== null &&
            row.Schedule_number !== undefined &&
            String(row.Schedule_number).trim() !== ''
        );

        window.all_schedules = window.schedule_df
            .map(row => String(row.Schedule_number).trim())
            .filter(s => !['EXT', 'ACQ', 'Tutorial', 'Keyboard_Tutorial'].includes(s));

        console.log("CSV parsed successfully. Schedules found:", window.all_schedules);

        // Welcome message
        window.welcome_message = new visual.TextStim({
            win: psychoJS.window,
            name: 'welcome_message',
            text: "Hello, thank you for participating in the experiment.\n" +
                  "If you wish to stop participating, hit the 'Escape' key; however, you will not receive sona credit.\n" +
                  "Hit 'Enter' when you are ready to begin.",
            height: 0.05,
            color: new util.Color([1, 1, 1]),
            pos: [0, 0],
            units: 'height'
        });
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        welcome = true;
      Begin Routine:
        #Initializes routine boolean
        welcome = True
      Each Frame:
        while welcome:
            end_keys = event.getKeys(['escape'])
            if 'escape' in end_keys:
                sys.exit()
            keys = event.getKeys(['return']) #If enter is pressed
            draw_welcome()
            if 'return' in keys:
                welcome = False #Ends routine
                win.flip()
      Each JS Frame:
        // Schedule.Event is used to nullify PsychoJS
        // default settings. This is important for ease of
        // use.

        continueRoutine = true;

        window.welcome_message.draw();

        // Enables the reading of keys
        window.read_keys = psychoJS.eventManager.getKeys();

        // Allow the user to withdraw consent
        if (window.read_keys.includes("escape")) {
            psychoJS.quit({ message: "Experiment ended by participant." });
        }

        if (window.read_keys.includes("Tab")) {
            console.log("PsychoJS can read tab");
        }

        if (window.read_keys.includes("ctrl")) {
            console.log("PsychoJS can read ctrl");
        }

        if (window.read_keys.includes("shift")) {
            console.log("PsychoJS can read shift");
        }

        if (window.read_keys.includes("s")) {
            console.log("PsychoJS can read s");
        }

        // Procede to next routine

        if (window.read_keys.includes("return")) {
            console.log("Welcome ended with enter, huzzah!")
            return Scheduler.Event.NEXT;
        }

        return Scheduler.Event.FLIP_REPEAT;
      End JS Routine:
        console.log("Exited exit from welcome recorded");
        window.welcome_message.setAutoDraw(false);
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  Routine Tutorial
    RoutineSettingsComponent Tutorial
      desc = This is an explicit tutorial for PRESS-B. The Tutorial routine may be used alongside other training routines such as the "Tutorial_Video" and "Acquisition."  
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    CodeComponent tutorial
      Code Type = Auto->JS
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      Begin Experiment:
        #Total amount of points, reset after routine
        points = 0

        #The following three variables
        #are invisible to the user.

        dead_presses = 0 #Presses that don't do anything

        #How many points can be earned using each color
        blue_points = 0
        yellow_points = 0

        #List of objects

        #"Whiteboard" for instructions
        tutorial_board = visual.Rect(win,
            width=1, height=0.1,
            fillColor=[1, 1, 1], lineColor=[0.6,0.6,0.6],
            fillColorSpace='rgb', lineWidth=10, pos=[0, 0.4])

        #Text instructions
        space_instruction = visual.TextStim(win,
            text="Press 'SPACE' to earn points",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0.4], opacity=1)

        hit_enter_prompt_blue = visual.TextStim(win,
            text="Press 'ENTER' to continue",
            height=0.04, color=[1.0000, 0.6863, -1.0000],
            pos=[0, 0])

        hit_enter_prompt_yellow = visual.TextStim(win,
            text="Press 'ENTER' to continue",
            height=0.04, color=[-1.0000, -0.6863, 1.0000],
            pos=[0, 0])

        pre_tab_encouragement = visual.TextStim(win,
            text="Let's earn some more points!",
            height=0.04, color=[-1,-1,-1],
            pos=[0,0.4], opacity=1)

        points_unearnable_text = visual.TextStim(win,
            text="Uh-oh, you're not earning points.",
            height=0.04, color=[-1,-1,-1],
            pos=[0,0.4], opacity=1)

        tab_instruction = visual.TextStim(win,
            text="Press the 'Tab' key to change the button's color.",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0.4], opacity=1)

        space_congrats_text = visual.TextStim(win,
            text="Congratulations, you earned a point!",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0.4], opacity=1)

        tab_congrats_text = visual.TextStim(win,
            text="Awesome, you changed the button color!",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0.4], opacity=1)

        main_tutorial_text = visual.TextStim(win,
            text="Now that you know the basics, let's earn some points!" \
                 " Switch colors to earn as many as you can.",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0.4], opacity=1)

        end_tutorial_text = visual.TextStim(win,
            text="This is the end of the tutorial." \
                 " Use what you've learned to earn points!",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0.4], opacity=1)

        end_tutorial_instruction = visual.TextStim(win,
            text= "Hit 'enter' to continue.",
            height=0.04,  color=[-1,-1,-1],
            pos=[0, 0], opacity=1)


        #Draws objects for the tutorial.

        #Parameters
        #----------
        #win: obj
            #Psychopy window
        #green_light_bo: object
            #Blacked out green_light
        #red_light_bo: object
            #Blacked out red_light
        #timer_text: object
            #Text for the timer, includes countdown
        #points_display: object
            #Shows how many points have been earned
        #response_bo: object
            #Blacked out response button
        #button_cycle_bo:
            #Blacked out switch button

        def draw_tutorial(win, green_light, red_light,
                            button_response, button_cycle,
                            switch_text, points_display):
            green_light.draw()
            red_light.draw()
            button_response.draw()
            button_cycle.draw()
            switch_text.draw()
            points_display.draw()
            tutorial_board.draw()

        def draw_congrats(win, green_light, red_light,
                            button_response, switch_text,
                            points_display, button_cycle):
            green_light.draw()
            red_light.draw()
            button_response.draw()
            button_cycle.draw()
            switch_text.draw()
            points_display.draw()
            tutorial_board.draw()

        #Summary:
        #--------
        #Controls space presses.
        #Punishment is not programmed in this routine.

        #Parameters
        #----------
        #current_time: float
            #Current time in the routine
        #green_light: object
            #Reinforcement light
        #red_light: object
            #Punishment light
        #button_response: object
            #The response button.
        #button_cycle: object
            #Button that changes the response button color

        #Returns:
        #--------
        #points: integer
            #Number of points earned
        #press_blue_earn_index: integer
            #Number of blue presses towards reinforcement.
            #Used for XR schedules
        #press_yellow_earn_index: integer
            #Number of yellow presses towards reinforcement.
            #Used for XR schedules
        #blue_points: integer
            #Number of points earned with blue.
            #Only called during this tutorial.
            #A maximum of ten can be earned.
        #yellow_points: integer
            #Number of points earned with yellow
            #Only called during this tutorial
            #A maximum of ten can be earned.

        def handle_space_tutorial(t, schedule_manager, flash_manager, points,
                                  button_response, press_blue_earn_index,
                                  press_yellow_earn_index, blue_points,
                                  yellow_points, sounds):

            ding = sounds['ding'] if sounds else None

            if (button_response.fillColor == [-1, -1, 1]).all():

                if ((0 < schedule_manager.blue_i < float('inf')) or
                    (0 < schedule_manager.blue_random_i < float('inf'))):

                    if t >= schedule_manager.next_blue_earn_time:
                        if blue_points <= 9:
                            blue_points += 1
                            points += int(schedule_manager.blue_mag)
                            schedule_manager.blue_fh_index += 1
                            schedule_manager.next_blue_earn_time = (
                                schedule_manager.calculate_next_blue_earn_time(button_response)
                            )

                            flash_manager.start_flash('gl', t)

                            if ding is not None:
                                play_sound(ding)

                elif ((0 < schedule_manager.blue_r < float('inf')) or
                      (0 < schedule_manager.blue_random_r < float('inf'))):

                    press_blue_earn_index += 1

                    if press_blue_earn_index >= round(
                            schedule_manager.calculate_next_press_earn_requirement(button_response)):

                        if blue_points <= 9:
                            blue_points += 1
                            points += int(schedule_manager.blue_mag)
                            press_blue_earn_index = 0
                            schedule_manager.blue_fh_index += 1

                            flash_manager.start_flash('gl', t)

                            if ding is not None:
                                play_sound(ding)

            elif (button_response.fillColor == [1, 1, -1]).all():

                if ((0 < schedule_manager.yellow_i < float('inf')) or
                    (0 < schedule_manager.yellow_random_i < float('inf'))):

                    if t >= schedule_manager.next_yellow_earn_time:
                        if yellow_points <= 9:
                            yellow_points += 1
                            points += int(schedule_manager.yellow_mag)
                            schedule_manager.yellow_fh_index += 1
                            schedule_manager.next_yellow_earn_time = (
                                schedule_manager.calculate_next_yellow_earn_time(button_response)
                            )

                            flash_manager.start_flash('gl', t)

                            if ding is not None:
                                play_sound(ding)

                elif ((0 < schedule_manager.yellow_r < float('inf')) or
                      (0 < schedule_manager.yellow_random_r < float('inf'))):

                    press_yellow_earn_index += 1

                    if press_yellow_earn_index >= round(
                            schedule_manager.calculate_next_press_earn_requirement(button_response)):

                        if yellow_points <= 9:
                            yellow_points += 1
                            points += int(schedule_manager.yellow_mag)
                            press_yellow_earn_index = 0
                            schedule_manager.yellow_fh_index += 1

                            flash_manager.start_flash('gl', t)

                            if ding is not None:
                                play_sound(ding)

            return (
                points,
                press_blue_earn_index,
                press_yellow_earn_index,
                blue_points,
                yellow_points
            )
      Begin Routine:
        #Starts routine
        routine_clock = core.Clock()
        #Calls FlashManager()
        flash_manager = FlashManager()
        print("Tutorial started")
        #Allows tutorial to run
        tutorial = True

        #Boolean for each tutorial phase
        space_tutorial = True
        space_congrats = False
        no_points_phase = False
        pre_tab_tutorial = False
        tab_tutorial = False
        tab_congrats = False
        main_tutorial = False
        end_tutorial = False

        #Changeover delay booleans
        switch_enabled = True
        tab_pressed = False
        switch_cod = False

        #Initializes blue and yellow points as zero
        blue_points = 0
        yellow_points = 0

        #Notes:
            #Session duration, punishment values,
            #schedule lights, and blackout_duration
            #are used during the routine phase.
            #They are still read for cohesion with
            #the rest of the CSV.
        try:
            #Reads data from 'Tutorial' schedule from the CSV
            current_schedule = 'Tutorial'
            schedule_data = schedule_df[schedule_df['Schedule_number'] == "Tutorial"].copy()
            schedule_manager = ScheduleManager(
                safe_float(schedule_data['Blue_Interval']), safe_float(schedule_data['Yellow_Interval']),
                safe_float(schedule_data['Blue_Pun_Interval']), safe_float(schedule_data['Yellow_Pun_Interval']),
                safe_float(schedule_data['Blue_Ratio']), safe_float(schedule_data['Yellow_Ratio']),
                safe_float(schedule_data['Blue_Pun_Ratio']), safe_float(schedule_data['Yellow_Pun_Ratio']),
                safe_float(schedule_data['Blue_Random_Ratio']), safe_float(schedule_data['Yellow_Random_Ratio']),
                safe_float(schedule_data['Blue_Pun_Random_Ratio']), safe_float(schedule_data['Yellow_Pun_Random_Ratio']),
                safe_float(schedule_data['Blue_Random_Interval']), safe_float(schedule_data['Yellow_Random_Interval']),
                safe_float(schedule_data['Blue_Pun_Random_Interval']), safe_float(schedule_data['Yellow_Pun_Random_Interval']),
                safe_bool(schedule_data['Blue_FH']), safe_bool(schedule_data['Yellow_FH']),
                safe_bool(schedule_data['Blue_Pun_FH']), safe_bool(schedule_data['Yellow_Pun_FH']),
                safe_float(schedule_data['Blue_FH_Intervals']), safe_float(schedule_data['Yellow_FH_Intervals']),
                safe_float(schedule_data['Blue_Pun_FH_Intervals']), safe_float(schedule_data['Yellow_Pun_FH_Intervals']),
                safe_string(schedule_data['Blue_FH_Type']), safe_string(schedule_data['Yellow_FH_Type']),
                safe_string(schedule_data['Blue_Pun_FH_Type']), safe_string(schedule_data['Yellow_Pun_FH_Type']),
                safe_float(schedule_data['Session_Duration']), safe_float(schedule_data['Blue_Mag']),
                safe_float(schedule_data['Yellow_Mag']), safe_float(schedule_data['Blue_Pun_Mag']),
                safe_float(schedule_data['Yellow_Pun_Mag']), safe_float(schedule_data['Changeover_Delay']),
                safe_float(schedule_data['Blackout_Duration']),
                safe_string(schedule_data['Blue_Distribution']), safe_string(schedule_data['Yellow_Distribution']),
                safe_string(schedule_data['Blue_Pun_Distribution']), safe_string(schedule_data['Yellow_Pun_Distribution']),
                safe_float(schedule_data['SD_Blue']), safe_float(schedule_data['SD_Yellow']),
                safe_float(schedule_data['SD_Blue_Pun']), safe_float(schedule_data['SD_Yellow_Pun']),
                safe_string(schedule_data['Schedule_Lights']), safe_string(schedule_data['Context_Path']),
                safe_tuple(schedule_data['Context_Position']), safe_tuple(schedule_data['Context_Size']),
                safe_float(schedule_data['Context_Opacity']), safe_float(schedule_data['Context_Depth']),
                safe_string(schedule_data['Ding_Path']), safe_string(schedule_data['Womp_Path'])
               )

            #If data is read, the routine will proceed
            print("Properly read")
            sounds = get_sounds(sound_cache, current_schedule)
            schedule_loaded = True
            routine_active = True
            tutorial = True

        #Routine will not run if data is incomplete
        except Exception as e:
            print(f"Error loading schedule: {e}")
            print(schedule_manager)
            tutorial = False
      Each Frame:
        while tutorial:
            end_keys = event.getKeys(['escape'])
            if 'escape' in end_keys:
                    sys.exit()

            t = routine_clock.getTime()

            points_display.text = f'Points: {points}'
            flash_manager.update_flashes(t, green_light,
                                        red_light, button_response,
                                        button_cycle)

            if space_tutorial:
                keys = event.getKeys(['space'])
                space_instruction.draw()
                draw_tutorial(win, green_light, red_light,
                            button_response, button_cycle,
                            switch_text, points_display)
                space_instruction.draw()
                win.flip()
                if 'space' in keys:
                    points, press_blue_earn_index, \
                    press_yellow_earn_index, \
                    blue_points, yellow_points =\
                    handle_space_tutorial(t, schedule_manager, flash_manager,
                                          points, button_response,
                                          press_blue_earn_index,
                                          press_yellow_earn_index,
                                          blue_points, yellow_points, sounds)
                    flash_manager.start_flash('rb', t)
                    if points >= 1:
                        event.clearEvents()
                        space_congrats = True
                        space_tutorial = False

            if space_congrats:
                keys = event.getKeys(['return'])
                draw_congrats(win, green_light, red_light,
                            button_response, switch_text,
                            points_display, button_cycle)
                space_congrats_text.draw()
                hit_enter_prompt_blue.draw()
                win.flip()
                if 'return' in keys:
                    event.clearEvents()
                    pre_tab_tutorial = True
                    space_congrats = False

            if pre_tab_tutorial:
                if dead_presses < 10:
                    keys = event.getKeys(['space'])
                    draw_tutorial(win, green_light, red_light,
                                button_response, button_cycle,
                                switch_text, points_display)
                    pre_tab_encouragement.draw()
                    win.flip()
                    if 'space' in keys:
                        dead_presses += 1
                        flash_manager.start_flash('rb', t)
                        keys.remove('space')
                else:
                    keys = event.getKeys(['return'])
                    draw_tutorial(win, green_light, red_light,
                                button_response, button_cycle,
                                switch_text, points_display)
                    points_unearnable_text.draw()
                    hit_enter_prompt_blue.draw()
                    win.flip()
                    if event.getKeys(['return']):
                        event.clearEvents()
                        tab_tutorial = True
                        pre_tab_tutorial = False

            if tab_tutorial:
                keys = event.getKeys(['tab'])
                draw_tutorial(win, green_light, red_light,
                            button_response, button_cycle,
                            switch_text, points_display)
                tab_instruction.draw()
                win.flip()
                if 'tab' in keys:
                    handle_tab_key(t, flash_manager,
                                    button_response,
                                    schedule_manager)
                    event.clearEvents()
                    tab_congrats = True
                    tab_tutorial = False

            if tab_congrats:
                keys = event.getKeys(['return'])
                draw_congrats(win, green_light, red_light,
                                    button_response, button_cycle,
                                    switch_text, points_display)
                tab_congrats_text.draw()
                hit_enter_prompt_yellow.draw()
                win.flip()
                if 'return' in keys:
                    event.clearEvents()
                    main_tutorial = True
                    tab_congrats = False

            if main_tutorial:
                in_changeover_delay = (t - schedule_manager.last_switch_time < schedule_manager.changeover_delay)
                keys = event.getKeys(['space', 'tab'])
                draw_tutorial(win, green_light, red_light,
                            button_response, button_cycle,
                            switch_text, points_display)
                main_tutorial_text.draw()
                win.flip()
                if 'space' in keys:
                    points, press_blue_earn_index, \
                    press_yellow_earn_index, \
                    blue_points, yellow_points=\
                    handle_space_tutorial(t, schedule_manager, flash_manager,
                                          points, button_response,
                                          press_blue_earn_index,
                                          press_yellow_earn_index,
                                          blue_points, yellow_points, sounds)
                    points_display.text = f'Points: {points}'
                    flash_manager.start_flash('rb', t)

                if in_changeover_delay and 'tab' in keys:
                    keys.remove('tab')
                tab_pressed = 'tab' in keys

                if tab_pressed and not in_changeover_delay:
                    switch_enabled = handle_tab_key(t, flash_manager,
                                                    button_response,
                                                    schedule_manager)

                if blue_points >= 10 and yellow_points >= 10:
                    end_tutorial = True
                    main_tutorial = False

            if end_tutorial:
                points = 0
                keys = event.getKeys(['return'])
                draw_congrats(win, green_light, red_light,
                            button_response, switch_text,
                            points_display, button_cycle)
                end_tutorial_text.draw()
                end_tutorial_instruction.draw()
                win.flip()
                if 'return' in keys:
                    event.clearEvents()
                    break
      End Routine:
        #resets points
        blue_points = 0
        yellow_points = 0
        print("Tutorial ended")
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  Routine Trial
    RoutineSettingsComponent Trial
      desc = This is the main block of trials and contains nearly all of the logic required for the program to run. Therefore, do not remove this routine.
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    CodeComponent omnicode
      Code Type = Both
      Before JS Experiment:
        async function debugPaths() {
            const testPaths = [
                'PRESS-B_Schedule_Entry.csv',
                'resources/PRESS-B_Schedule_Entry.csv',
                'stimuli/PRESS-B_Schedule_Entry.csv',
                'stimuli/contexts/PRESS-B_Schedule_Entry.csv',
                'data/PRESS-B_Schedule_Entry.csv',
                '../PRESS-B_Schedule_Entry.csv',
            ];

            for (const path of testPaths) {
                try {
                    const res = await fetch(path);
                    console.log(`✅ FOUND at: ${path} (status ${res.status})`);
                } catch (e) {
                    console.log(`❌ NOT found at: ${path}`);
                }
            }
        }
        debugPaths();
      Begin Experiment:
        #Do not delete this component

        #PsychoPy imports
        from psychopy import core, event, visual, monitors, sound

        #Python specific imports
        import time
        import pandas as pd

        #Replace random.random()
        def random_float(state=[None]):
            #Initialize state
            if state[0] is None:
                state[0] = id(object())

            # Combine multiple sources of entropy
            seed = id(object()) + id([]) + id({}) + hash(str(id(object())))

            # Mix with previous state
            seed = seed ^ state[0]

            # Multiple rounds of mixing with different constants
            seed = (seed * 2654435761) % (2**32)
            seed = (seed ^ (seed >> 16)) * 0x85ebca6b
            seed = (seed ^ (seed >> 13)) * 0xc2b2ae35
            seed = seed ^ (seed >> 16)

            # Update state for next call
            state[0] = seed

            # Normalize to 0-1
            return (seed % 1000000007) / 1000000007

        def ln(x, tol=1e-9):
            """Natural logarithm using binary search with Taylor series exp"""
            if x <= 0:
                raise ValueError("ln undefined for x <= 0")
            if x == 1:
                return 0.0

            def exp_series(y):
                # Clamp y to avoid overflow/underflow
                if y > 50:
                    return 1e50  # Very large number
                if y < -50:
                    return 1e-50  # Very small number

                term = 1.0
                result = 1.0
                for n in range(1, 100):  # More iterations
                    term *= y / n
                    result += term
                    if abs(term) < 1e-15:  # Better tolerance
                        break
                return result

            # Better initial bounds based on input
            if x < 1:
                low, high = -20.0, 0.0
            else:
                low, high = 0.0, 20.0

            # Binary search for ln(x)
            for _ in range(100):  # Limit iterations
                if high - low < tol:
                    break
                mid = (low + high) / 2
                exp_mid = exp_series(mid)
                if exp_mid < x:
                    low = mid
                else:
                    high = mid

            return (low + high) / 2

        def log_base(x, base, tol=1e-9):
            """Logarithm with arbitrary base using the improved ln function"""
            if base <= 0 or base == 1:
                raise ValueError("Base must be positive and not equal to 1")
            return ln(x, tol) / ln(base, tol)

        #Replace np.random.normal()
        def random_normal(mu=0.0, sigma=1.0, state=[None]):
            """
            Generate normally distributed random numbers using Box-Muller transform.

            Args:
                mu: Mean of the normal distribution
                sigma: Standard deviation of the normal distribution
                state: State for the random_float function

            Returns:
                A random sample from N(mu, sigma^2)
            """
            # Helper functions
            def sqrt(x):
                if x == 0:
                    return 0
                guess = x / 2.0
                for _ in range(20):
                    guess = (guess + x / guess) / 2.0
                return guess

            def cos(x):
                # Taylor series for cos(x)
                x = x % (2 * 3.14159265359)
                result = 1.0
                term = 1.0
                for n in range(1, 30):
                    term *= -x * x / ((2 * n - 1) * (2 * n))
                    result += term
                    if abs(term) < 1e-10:
                        break
                return result

            # Generate two uniform random numbers in (0, 1)
            u1 = random_float(state)
            u2 = random_float(state)

            # Ensure u1 is not zero (would cause log(0))
            while u1 == 0 or u1 == 1:
                u1 = random_float(state)

            # Box-Muller transform
            pi = 3.14159265359
            ln_u1 = ln(u1)
            z0 = sqrt(-2.0 * ln_u1) * cos(2.0 * pi * u2)

            # Scale and shift to desired mean and std dev
            return mu + sigma * z0

        def random_exponential(scale=1.0, state=[None]):
            """
            Generate exponentially distributed random numbers.

            The exponential distribution is often used for modeling time between events
            in a Poisson process (e.g., time between arrivals, lifetimes).

            Args:
                scale: The scale parameter (1/lambda), which is the mean of the distribution.
                       Note: np.random.exponential uses 'scale' (the mean), not 'rate' (lambda).
                state: State for the random_float function

            Returns:
                A random sample from Exponential(scale)
            """
            # Generate uniform random number in (0, 1)
            u = random_float(state)

            # Ensure u is not zero (would cause log(0))
            while u == 0 or u == 1:
                u = random_float(state)

            # Inverse transform: X = -scale * ln(U)
            return -scale * ln(u)

        #Replace np.random.permutation()
        def random_permutation(n, state=[None]):
            """
            Randomly permute a sequence or return a permuted range.

            Args:
                n: If an integer, returns a random permutation of range(n).
                   If a sequence (list/tuple), returns a shuffled copy of it.
                state: State for the random_float function

            Returns:
                A randomly permuted array/list
            """
            # Handle integer input - create range
            if isinstance(n, int):
                arr = list(range(n))
            else:
                # Handle sequence input - make a copy
                arr = list(n)

            # Fisher-Yates shuffle algorithm
            for i in range(len(arr) - 1, 0, -1):
                # Generate random index from 0 to i (inclusive)
                j = int(random_float(state) * (i + 1))

                # Handle edge case where random_float returns exactly 1.0
                if j > i:
                    j = i

                # Swap elements
                arr[i], arr[j] = arr[j], arr[i]

            return arr

        #Replace random.choice()
        def choice(sequence):
            # Get random index
            random_index = int(random_float() * len(sequence))

            # Handle edge case where random_float returns exactly 1.0
            if random_index >= len(sequence):
                random_index = len(sequence) - 1

            return sequence[random_index]

        #Replace np.array.equal
        def check_colors(color1, color2):
            if len(color1) != len(color2):
                return False
            for i in range(len(color1)):
                if color1[i] != color2[i]:
                    return False
            return True

        routine_clock = core.Clock()

        #Uses schedule data from the CSV as a DataFrame
        schedule_df = pd.read_csv('PRESS-B_1ABA_ABB_Group1_War.csv', na_values=['x']) #Reads CSV
        keyboard_path = schedule_df['Keyboard_Path'].iloc[0]

        schedule_df['Schedule_number'] = schedule_df['Schedule_number'].apply(
            lambda x: int(x) if str(x).isdigit() else x
        )

        schedule_df = schedule_df[~schedule_df['Schedule_number'].isin(
            ['File_path_ding', 'File_path_womp']
        )]

        all_schedules = list(schedule_df['Schedule_number'])

        # Removes 'EXT', 'ACQ', and Tutorial from main trial block
        all_schedules = [
            schedule for schedule in all_schedules
            if schedule not in ['EXT', 'ACQ', 'Tutorial', 'Keyboard_Tutorial']
        ]

        # Convert remaining schedule numbers to integers
        all_schedules = [int(schedule) for schedule in all_schedules]
        #Prints schedules for debugging. I strongly suggest keeping this.
        print(all_schedules)
        print(f"number of initial schedules: {len(all_schedules)}")
        #Initializes a list of used schedules
        used_schedules = []

        #Upon initialization:
        switch_enabled = True #the tab button works
        tab_pressed = False #no changeover delay
        gl_flash = False #the reinforcement light does not flash
        rl_flash = False #the punishment light does not flash
        current_sound = None #no sound plays
        handle_blackout = False #no blackout period

        session_number = 0

        points = 0 #the subject starts with 0 points

        #Note:
        #These varibles are just initialized here.
        #They are actually set in the ScheduleManager() class.

        #Press indicies
        press_blue_earn_index = 0
        press_blue_loss_index = 0
        press_yellow_earn_index = 0
        press_yellow_loss_index = 0

        blue_fh_index = 0
        yellow_fh_index = 0
        blue_pun_fh_index = 0
        yellow_pun_fh_index = 0

        #Intializes proc values as impossible
        blue_earn_proc_value = 1
        blue_loss_proc_value = 1
        yellow_earn_proc_value = 1
        yellow_loss_proc_value = 1

        #Initializes proc values
        blue_interval_earn_value = random_float()
        yellow_interval_earn_value = random_float()
        blue_interval_loss_value = random_float()
        yellow_interval_loss_value = random_float()

        #Light colors
        light_on = [1, 1, 1] #White
        light_off = [-1, -1, -1] #Black
        button_color1 = [-1, -1, 1] #Blue
        button_color2 = [1, 1, -1] #Yellow

        light_state = "OFF"

        context_cache = {}

        #Objects
        green_light = visual.Rect(win,
            width=0.2, height=0.2,
            fillColor=[-1.0000, -0.3020, -1.0000],
            colorSpace='rgb', pos=[-0.45, 0])

        red_light = visual.Rect(win,
            width=0.2, height=0.2,
            fillColor=[-0.3020, -1, -1.0000],
            colorSpace='rgb', pos=[0.45,0])

        button_response = visual.Rect(win,
            width=0.65, height=0.4,
            fillColor=[-1, -1, 1], lineColor=[0,0,0],
            colorSpace='rgb', pos=[0, 0],
            opacity=1)

        button_cycle = visual.Rect(win,
            width=0.65, height=0.1,
            fillColor=[0.6549,0.6549,0.6549],
            lineColor=[0,0,0], colorSpace='rgb',
            pos=[0,-0.3], opacity=1)

        switch_text = visual.TextStim(win,
            text='SWITCH', height=0.05,
            color=[-1,-1,-1], pos=[0,-0.3],
            opacity=1)

        points_display = visual.TextStim(win,
            text='Points: 0', height=0.05,
            color=[-1,-1,-1], pos=[0,0.25])

        light_1 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(-0.75, 0.4)])

        light_2 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(-0.60, 0.4)])

        light_3 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(-0.45, 0.4)])

        light_4 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(-0.3, 0.4)])

        light_5 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(-0.15, 0.4)])

        light_6 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(0, 0.4)])

        light_7 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(0.15, 0.4)])

        light_8 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(0.3, 0.4)])

        light_9 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(0.45, 0.4)])

        light_10 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(0.6, 0.4)])

        light_11 = visual.Rect(win,
            width=0.125, height=0.125,
            fillColor=light_off,
            colorSpace='rgb',
            pos=[(0.75, 0.4)])

        #'bo' is short for "Blackout"
        response_bo = visual.Rect(win,
            height=0.4, width=0.65,
            fillColor=[0.6549, 0.6549, 0.6549],
            pos=(0,0), colorSpace='rgb')

        timer_text = visual.TextStim(win,
            text="Time Remaining: 15",
            pos=(0,0), height=0.05, color='black')

        green_light_bo = visual.Rect(win,
            width=0.2, height=0.2,
            fillColor=[0.3339, 0.3339, 0.3339],
            colorSpace='rgb', pos=[-0.45, 0])

        red_light_bo = visual.Rect(win,
            width=0.2, height=0.2,
            fillColor=[0.3339, 0.3339, 0.3339],
            colorSpace='rgb', pos=[0.45,0])

        button_cycle_bo = visual.Rect(win,
            width=0.65, height=0.1,
            fillColor=[0.4549,0.4549,0.4549],
            lineColor=[0,0,0], colorSpace='rgb',
            pos=[0,-0.3])

        points_display = visual.TextStim(win,
            text='Points: 0', height=0.05,
            color=[-1,-1,-1], pos=[0,0.25])

        #Dictionary of lights
        light_mapping = {
            1: light_1, 2: light_2, 3: light_3,
            4: light_4, 5: light_5, 6: light_6,
            7: light_7, 8: light_8, 9: light_9,
            10: light_10, 11: light_11
        }

        lights = [light_1, light_2, light_3,
                    light_4, light_5, light_6,
                    light_7, light_8, light_9,
                    light_10, light_11]

        def reset_routine_clock():
            routine_clock.reset()

        class ScheduleManager:
            def __init__(self, blue_i, yellow_i, blue_pun_i, yellow_pun_i,
                         blue_r, yellow_r, blue_pun_r, yellow_pun_r,
                         blue_random_r, yellow_random_r,
                         blue_pun_random_r, yellow_pun_random_r,
                         blue_random_i, yellow_random_i,
                         blue_pun_random_i, yellow_pun_random_i,
                         blue_fh, yellow_fh, blue_pun_fh, yellow_pun_fh,
                         blue_fh_n_intervals, yellow_fh_n_intervals,
                         blue_pun_fh_n_intervals, yellow_pun_fh_n_intervals,
                         blue_fh_type, yellow_fh_type, blue_pun_fh_type,
                         yellow_pun_fh_type, session_duration, blue_mag, yellow_mag,
                         blue_pun_mag, yellow_pun_mag, changeover_delay,
                         blackout_duration, blue_dist_type, yellow_dist_type,
                         blue_pun_dist_type, yellow_pun_dist_type,
                         sd_blue_interval, sd_yellow_interval,
                         sd_blue_pun_interval, sd_yellow_pun_interval,
                         schedule_lights, context_path, context_position,
                         context_size, context_opacity, context_depth,
                         ding_path, womp_path):

                # Initialize reinforcement and punishment parameters
                self.blue_i = blue_i or float('inf')
                self.yellow_i = yellow_i or float('inf')
                self.blue_pun_i = blue_pun_i or float('inf')
                self.yellow_pun_i = yellow_pun_i or float('inf')

                self.blue_r = blue_r or float('inf')
                self.yellow_r = yellow_r or float('inf')
                self.blue_pun_r = blue_pun_r or float('inf')
                self.yellow_pun_r = yellow_pun_r or float('inf')

                self.blue_random_r = blue_random_r or -float('inf')
                self.yellow_random_r = yellow_random_r or -float('inf')
                self.blue_pun_random_r = blue_pun_random_r or -float('inf')
                self.yellow_pun_random_r = yellow_pun_random_r or -float('inf')

                """
                Not using these
                # Random ratio probabilities
                if self.blue_random_r != -float('inf'):
                    self.blue_random_r_chance = 1/self.blue_random_r
                else:
                    self.blue_random_r_chance = -float('inf')

                if self.yellow_random_r != -float('inf'):
                    self.yellow_random_r_chance = 1/self.yellow_random_r
                else:
                    self.yellow_random_r_chance = -float('inf')

                if self.blue_pun_random_r != -float('inf'):
                    self.blue_pun_random_r_chance = 1/self.blue_pun_random_r
                else:
                    self.blue_pun_random_r_chance = -float('inf')

                if self.yellow_pun_random_r != -float('inf'):
                    self.yellow_pun_random_r_chance = 1/self.yellow_pun_random_r
                else:
                    self.yellow_pun_random_r_chance = -float('inf')
                """

                self.blue_random_i = blue_random_i or float('inf')
                self.yellow_random_i = yellow_random_i or float('inf')
                self.blue_pun_random_i = blue_pun_random_i or float('inf')
                self.yellow_pun_random_i = yellow_pun_random_i or float('inf')

                """
                We are not using these rn.
                # Random interval probabilities
                if self.blue_random_i != -float('inf'):
                    self.blue_random_i_chance = 1/self.blue_random_i
                else:
                    self.blue_random_i_chance = -float('inf')

                if self.yellow_random_i != -float('inf'):
                    self.yellow_random_i_chance = 1/self.yellow_random_i
                else:
                    self.yellow_random_i_chance = -float('inf')

                if self.blue_pun_random_i != -float('inf'):
                    self.blue_pun_random_i_chance = 1/self.blue_pun_random_i
                else:
                    self.blue_pun_random_i_chance = -float('inf')

                if self.yellow_pun_random_i != -float('inf'):
                    self.yellow_pun_random_i_chance = 1/self.yellow_pun_random_i
                else:
                    self.yellow_pun_random_i_chance = -float('inf')
                """

                #Distribution type
                self.blue_dist_type = blue_dist_type
                self.yellow_dist_type = yellow_dist_type
                self.blue_pun_dist_type = blue_pun_dist_type
                self.yellow_pun_dist_type = yellow_pun_dist_type

                # Fleshler-Hoffman configuration
                self.blue_fh = blue_fh or False
                self.yellow_fh = yellow_fh or False
                self.blue_pun_fh = blue_pun_fh or False
                self.yellow_pun_fh = yellow_pun_fh or False

                self.blue_fh_n_intervals = blue_fh_n_intervals or 0
                self.yellow_fh_n_intervals = yellow_fh_n_intervals or 0
                self.blue_pun_fh_n_intervals = blue_pun_fh_n_intervals or 0
                self.yellow_pun_fh_n_intervals = yellow_pun_fh_n_intervals or 0

                self.blue_fh_type = blue_fh_type or False
                self.yellow_fh_type = yellow_fh_type or False
                self.blue_pun_fh_type = blue_pun_fh_type or False
                self.yellow_pun_fh_type = yellow_pun_fh_type or False

                self.blue_earn_last_update = core.getTime()
                self.yellow_earn_last_update = core.getTime()
                self.blue_loss_last_update = core.getTime()
                self.yellow_loss_last_update = core.getTime()

                self.blue_ratio_earn_value = random_float()
                self.yellow_ratio_earn_value = random_float()
                self.blue_pun_ratio_earn_value = random_float()
                self.yellow_pun_ratio_earn_value = random_float()

                self.blue_interval_earn_value = random_float()
                self.yellow_interval_earn_value = random_float()
                self.blue_interval_loss_value = random_float()
                self.yellow_interval_loss_value = random_float()

                # Indices for sequence tracking
                self.blue_fh_index = 0
                self.yellow_fh_index = 0
                self.blue_pun_fh_index = 0
                self.yellow_pun_fh_index = 0

                self.blue_fh_values = []
                self.yellow_fh_values = []
                self.blue_pun_fh_values = []
                self.yellow_pun_fh_values = []

                self.blue_fh_list = []
                self.yellow_fh_list = []
                self.blue_pun_fh_list = []
                self.yellow_pun_fh_list = []

                #Context images
                self.context_path = context_path or None
                self.context_position = context_position or (0,0) #Default in center
                self.context_size = context_size or [2,2] #Default whole screen
                self.context_opacity = context_opacity or None #Default opaque
                self.context_depth = context_depth or -1 #Default background

                self.ding_path = ding_path or None
                self.womp_path = womp_path or None

                self.generate_fleshler_hoffman_list()

                # General configuration
                self.session_duration = session_duration
                self.blue_mag = blue_mag or 0
                self.yellow_mag = yellow_mag or 0
                self.blue_pun_mag = blue_pun_mag or 0
                self.yellow_pun_mag = yellow_pun_mag or 0
                self.changeover_delay = changeover_delay or 0
                self.blackout_duration = blackout_duration or 0
                self.sd_blue_interval = sd_blue_interval or 0
                self.sd_yellow_interval = sd_yellow_interval or 0
                self.sd_blue_pun_interval = sd_blue_pun_interval or 0
                self.sd_yellow_pun_interval = sd_yellow_pun_interval or 0

                self.schedule_lights = schedule_lights or "OFF"

                self.next_blue_earn_time = 0
                self.next_blue_loss_time = 0
                self.next_yellow_earn_time = 0
                self.next_yellow_loss_time = 0

                self.current_interval_time = 0

                self.last_switch_time = 0
                self.interval_start = routine_clock.getTime()
                self.reset_times()

            def calculate_fleshler_hoffman(self, mean, n_intervals):

                #Define e here to avoid human and machine confusion
                e = 2.718281828

                if mean is None or n_intervals is None or n_intervals <= 0:
                    return [0]
                n_intervals = int(n_intervals)
                intervals = []
                for n in range(1, n_intervals + 1):
                    if n == n_intervals:
                        tn = mean * (1 + log_base(n_intervals, e))
                    else:
                        tn = mean * (1 + log_base(n_intervals, e) +
                                     (n_intervals - n) * log_base(n_intervals - n, e) -
                                     (n_intervals - n + 1) * log_base(n_intervals - n + 1, e))
                    intervals.append(tn)
                return intervals

            def generate_fleshler_hoffman_list(self):
                def process_fh_list(fh_flag, i_value, r_value, n_intervals, fh_type):
                    if not fh_flag:
                        return [float('inf')]

                    value = i_value if i_value > 0 and i_value != float('inf') else r_value
                    if value <= 0 or value == float('inf'):
                        return [float('inf')]

                    fh_values = self.calculate_fleshler_hoffman(value, n_intervals)

                    try:
                        if fh_type.upper() == "PROGRESSIVE":
                            return sorted(fh_values)
                        elif fh_type.upper() == "REGRESSIVE":
                            return sorted(fh_values, reverse=True)
                        elif fh_type.upper() == "RANDOM":
                            return random_permutation(fh_values)
                        else:
                            raise ValueError(f"Invalid FH type: {fh_type}")
                    except Exception as e:
                        print(f"Error processing Fleshler-Hoffman list: {e}")
                        return [float('inf')]

                self.blue_fh_list = process_fh_list(
                    self.blue_fh, self.blue_i, self.blue_r,
                    self.blue_fh_n_intervals, self.blue_fh_type
                )

                self.yellow_fh_list = process_fh_list(
                    self.yellow_fh, self.yellow_i, self.yellow_r,
                    self.yellow_fh_n_intervals, self.yellow_fh_type
                )

                self.blue_pun_fh_list = process_fh_list(
                    self.blue_pun_fh, self.blue_pun_i, self.blue_pun_r,
                    self.blue_pun_fh_n_intervals, self.blue_pun_fh_type
                )

                self.yellow_pun_fh_list = process_fh_list(
                    self.yellow_pun_fh, self.yellow_pun_i, self.yellow_pun_r,
                    self.yellow_pun_fh_n_intervals, self.yellow_pun_fh_type
                )

            def calculate_next_blue_earn_time(self, button_response):
                """Determines the next reinforcement time for blue VI schedules."""
                if self.blue_fh and self.blue_i > 0 and self.blue_i != float('inf'):
                    if self.blue_fh_index > self.blue_fh_n_intervals - 1:
                        self.blue_fh_index = 0
                    print(self.blue_fh_index)
                    interval = self.blue_fh_list[self.blue_fh_index]
                    print(interval)
                    self.blue_fh_index = (self.blue_fh_index + 1) % len(self.blue_fh_list)
                else:
                    if self.blue_dist_type == "GAUSSIAN":
                        interval = max(random_normal(self.blue_random_i, self.sd_blue_interval), 0)
                    else:
                        interval = random_exponential(scale=self.blue_random_i)
                return routine_clock.getTime() + interval

            def calculate_next_yellow_earn_time(self, button_response):
                """Determines the next reinforcement time for yellow VI schedules."""
                if self.yellow_fh and self.yellow_i > 0 and self.yellow_i != float('inf'):
                    if self.yellow_fh_index > self.yellow_fh_n_intervals - 1:
                        self.yellow_fh_index = 0
                    interval = self.yellow_fh_list[self.yellow_fh_index]
                    self.yellow_fh_index = (self.yellow_fh_index + 1) % len(self.yellow_fh_list)
                else:
                    if self.yellow_dist_type == "GAUSSIAN":
                        interval = max(random_normal(self.yellow_random_i, self.sd_yellow_interval), 0)
                    else:
                        interval = random_exponential(scale=self.yellow_random_i)
                return routine_clock.getTime() + interval

            def calculate_next_blue_loss_time(self, button_response):
                """Determines the next punishment time for blue VI schedules."""
                if self.blue_pun_fh and self.blue_pun_i > 0 and self.blue_pun_i != float('inf'):
                    if self.blue_pun_fh_index > self.blue_pun_fh_n_intervals - 1:
                        self.blue_pun_fh_index = 0
                    interval = self.blue_pun_fh_list[self.blue_pun_fh_index]
                    self.blue_pun_fh_index = (self.blue_pun_fh_index + 1) % len(self.blue_pun_fh_list)
                else:
                    if self.blue_pun_dist_type == "GAUSSIAN":
                        interval = max(random_normal(self.blue_pun_random_i, self.sd_blue_pun_interval), 0)
                    else:
                        interval = random_exponential(scale=self.blue_pun_random_i)
                return routine_clock.getTime() + interval

            def calculate_next_yellow_loss_time(self, button_response):
                """Determines the next punishment time for yellow VI schedules."""
                if self.yellow_pun_fh and self.yellow_pun_i > 0 and self.yellow_pun_i != float('inf'):
                    if self.yellow_pun_fh_index > self.yellow_pun_fh_n_intervals - 1:
                        self.yellow_pun_fh_index = 0
                    interval = self.yellow_pun_fh_list[self.yellow_pun_fh_index]
                    self.yellow_pun_fh_index = (self.yellow_pun_fh_index + 1) % len(self.yellow_pun_fh_list)
                else:
                    if self.yellow_pun_dist_type == "GAUSSIAN":
                        interval = max(random_normal(self.yellow_pun_random_i, self.sd_yellow_pun_interval), 0)
                    else:
                        interval = random_exponential(scale=self.yellow_pun_random_i)
                return routine_clock.getTime() + interval

            def calculate_next_press_earn_requirement(self, button_response):
                if check_colors(button_response.fillColor, button_color1) == True:  # Blue
                    if self.blue_fh and self.blue_r > 0 and self.blue_r != float('inf'):
                        if self.blue_fh_index > self.blue_fh_n_intervals - 1:
                            self.blue_fh_index = 0
                        interval = self.blue_fh_list[self.blue_fh_index]
                        self.blue_fh_index = (self.blue_fh_index + 1) % len(self.blue_fh_list)
                    else:
                        if self.blue_dist_type == "GAUSSIAN":
                            interval = max(random_normal(self.blue_random_r, self.sd_blue_interval), 0)
                        else:
                            interval = random_exponential(scale=self.blue_random_r)

                elif check_colors(button_response.fillColor, button_color2) == False:  # Yellow
                    if self.yellow_fh_index > self.yellow_fh_n_intervals - 1:
                        self.yellow_fh_index = 0
                    if self.yellow_fh and self.yellow_r > 0 and self.yellow_r != float('inf'):
                        interval = self.yellow_fh_list[self.yellow_fh_index]
                        self.yellow_fh_index = (self.yellow_fh_index + 1) % len(self.yellow_fh_list)
                    else:
                        if self.yellow_dist_type == "GAUSSIAN":
                            interval = max(random_normal(self.yellow_random_r, self.sd_yellow_interval), 0)
                        else:
                            interval = random_exponential(scale=self.yellow_random_r)

                else:
                    interval = float('inf')

                return max(interval, 0)

            def calculate_next_press_loss_requirement(self, button_response):
                if check_colors(button_response.fillColor, button_color1) == True:  # Blue
                    if self.blue_pun_fh_index > self.blue_pun_fh_n_intervals - 1:
                        self.blue_pun_fh_index = 0
                    if self.blue_pun_fh and self.blue_pun_r > 0 and self.blue_pun_r != float('inf'):
                        interval = self.blue_pun_fh_list[self.blue_pun_fh_index]
                        self.blue_pun_fh_index = (self.blue_pun_fh_index + 1) % len(self.blue_pun_fh_list)
                    else:
                        if self.blue_pun_dist_type == "GAUSSIAN":
                            interval = max(random_normal(self.blue_pun_random_r, self.sd_blue_pun_interval), 0)
                        else:
                            interval = random_exponential(scale=self.blue_pun_random_r)

                elif check_colors(button_response.fillColor, button_color2) == False:  # Yellow
                    if self.yellow_pun_fh_index > self.yellow_pun_fh_n_intervals - 1:
                        self.yellow_pun_fh_index = 0
                    if self.yellow_pun_fh and self.yellow_pun_r > 0 and self.yellow_pun_r != float('inf'):
                        interval = self.yellow_pun_fh_list[self.yellow_pun_fh_index]
                        self.yellow_pun_fh_index = (self.yellow_pun_fh_index + 1) % len(self.yellow_pun_fh_list)
                    else:
                        if self.yellow_pun_dist_type == "GAUSSIAN":
                            interval = max(random_normal(self.yellow_pun_random_r, self.sd_yellow_pun_interval), 0)
                        else:
                            interval = random_exponential(scale=self.yellow_pun_random_r)

                else:
                    interval = float('inf')

                return max(interval, 0)

            #Updates earn intervals
            def update_earn_intervals(self, button_response):

                #Sets the next earn requirement for I and R schedules (bar RR)

                #Parameters
                #----------
                #button_response : object
                    #The response button.

                if (button_response.fillColor == button_color1).all():  # Blue button
                    self.next_blue_earn_time = routine_clock.getTime() + self.get_normal_interval_blue(self.blue_i)
                    self.next_press_earn_requirement = self.calculate_next_press_earn_requirement(button_response)
                else:  # Yellow button
                    self.next_yellow_earn_time = routine_clock.getTime() + self.get_normal_interval_yellow(self.yellow_i)
                    self.next_press_earn_requirement = self.calculate_next_press_earn_requirement(button_response)

                if self.next_press_earn_requirement != float('inf'):
                    self.rounded_next_earn_requirement = round(self.next_press_earn_requirement)
                else:
                    self.rounded_next_earn_requirement = float('inf')

            def update_loss_intervals(self, button_response):

                #Sets the next earn time for FI and VI schedules

                #Parameters
                #----------
                #button_response : object
                    #The response button.

                if (button_response.fillColor == button_color1).all():
                    self.next_blue_loss_time = routine_clock.getTime() + self.get_normal_interval_blue_pun(self.blue_pun_i)
                    self.next_press_loss_requirement = self.calculate_next_press_loss_requirement(button_response)
                else:
                    self.next_yellow_loss_time = routine_clock.getTime() + self.get_normal_interval_yellow_pun(self.yellow_pun_i)
                    self.next_press_loss_requirement = self.calculate_next_press_loss_requirement(button_response)

                if self.next_press_loss_requirement != float('inf'):
                    self.rounded_next_loss_requirement = round(self.next_press_loss_requirement)
                else:
                    self.rounded_next_loss_requirement = float('inf')

                #Generates the next earn condition for I and R schedules.
                #This is separate from FH intervals.
                #Each possiblity is its own function. (Trust me, it's easier this way)

                #Parameters
                #----------
                #mean_interval : float
                    #The mean interval.

                #Returns
                #-------
                #float
                    #A normally distributed interval value.

            def get_interval_blue(self, mean_interval):
                if self.blue_dist_type == "GAUSSIAN":
                    return max(random_normal(loc=mean_interval, scale=self.sd_blue_interval), 0)
                else:
                    return random_exponential(scale=mean_interval)

            def get_interval_yellow(self, mean_interval):
                if self.yellow_dist_type == "GAUSSIAN":
                    return max(random_normal(loc=mean_interval, scale=self.sd_yellow_interval), 0)
                else:
                    return random_exponential(scale=mean_interval)

            def get_interval_blue_pun(self, mean_interval):
                if self.blue_pun_dist_type == "GAUSSIAN":
                    return max(random_normal(loc=mean_interval, scale=self.sd_blue_pun_interval), 0)
                else:
                    return random_exponential(scale=mean_interval)

            def get_interval_yellow_pun(self, mean_interval):
                if self.yellow_pun_dist_type == "GAUSSIAN":
                    return max(random_normal(loc=mean_interval, scale=self.sd_yellow_pun_interval), 0)
                else:
                    return random_exponential(scale=mean_interval)

            def generate_one_second_interval(self):

                #Generate new interval values if one second has passed.
                #Exclusively for RI schedules.

                self.current_interval_time = routine_clock.getTime()
                # Check if one second has passed
                if self.current_interval_time - self.interval_start >= 1:
                # Update interval values based on probabilities
                    if self.blue_random_i > 0:
                        self.blue_interval_earn_value = random_float()
                    if self.yellow_random_i > 0:
                        self.yellow_interval_earn_value = random_float()
                    if self.blue_pun_random_i > 0:
                        self.blue_interval_loss_value = random_float()
                    if self.yellow_pun_random_i > 0:
                        self.yellow_interval_loss_value = random_float()
                    # Reset the interval start time
                    self.interval_start = self.current_interval_time

            def reset_times(self):
                reset_routine_clock()
                self.current_interval_time = routine_clock.getTime()
                self.next_blue_earn_time = self.calculate_next_blue_earn_time(button_response)
                self.next_blue_loss_time = self.calculate_next_blue_loss_time(button_response)
                self.next_yellow_earn_time = self.calculate_next_yellow_earn_time(button_response)
                self.next_yellow_loss_time = self.calculate_next_yellow_loss_time(button_response)
                self.next_press_earn_requirement = self.calculate_next_press_earn_requirement(button_response)
                self.next_press_loss_requirement = self.calculate_next_press_loss_requirement(button_response)
                if self.next_press_earn_requirement != float('inf'):
                    self.rounded_next_earn_requirement = round(self.next_press_earn_requirement)
                else:
                    self.rounded_next_earn_requirement = float('inf')
                if self.next_press_loss_requirement != float('inf'):
                    self.rounded_next_loss_requirement = round(self.next_press_loss_requirement)
                else:
                    self.rounded_next_loss_requirement = float('inf')

        class FlashManager:

            #Class that handles the flashing of non-schedule lights.
            #Includes the green and red lights,the response and cycle buttons,
            #and changeover delay.

            #'gl' = green_light, 'rl' = red_light,
            #'rb' = button_response, 'cycle' = button_cycle
            #'switch_cod' = changeover delay

            def __init__(self):
                #Initializes flash states as 'False'
                self.flash_states = {'gl': False, 'rl': False,
                                    'switch_cod': False, 'rb': False,
                                    'cycle': False}
                #Flash times start times are at '0'
                self.flash_start_times = {'gl': 0, 'rl': 0,
                                         'switch_cod': 0, 'rb': 0,
                                         'cycle': 0}
                #Duration of flashes, all values are in seconds
                self.flash_durations = {'gl': 0.25, 'rl': 0.25,
                                        'switch_cod': 0.5, 'rb': 0.1,
                                        'cycle': 0.1}
                #sets the orginial colors as None, that is [0, 0, 0]
                self.original_colors = {'rb': None, 'cycle': None}


            #Sets the appropriate flash type to 'True'.
            #This is called in other functions.

            #Parameters
            #----------
            #flash_type: string
                #Refers to which object should flash

            #start_time: integer
                #Makes sure the flashes start at 0.

            #Returns
            #-------
            #None

            def start_flash(self, flash_type, start_time, object=None):
                self.flash_states[flash_type] = True
                self.flash_start_times[flash_type] = start_time
                if flash_type in ['rb', 'cycle'] and object is not None:
                    self.original_colors[flash_type] = object.fillColor


            #Summary
            #Updates the flash state depending upon time.
            #If time between the start of the flash and current time
            #is less than flash duration, the object will stay its flash color.
            #If the elapsed time is greater than flash duration,
            #objects will return to their original color.

            #Parameters
            #----------
            #current_time: float
                #Current time in the routine
            #green_light: object
                #Reinforcement light
            #red_light: object
                #Punishment light
            #button_response: object
                #The response button.
            #button_cycle: object
                #Button that changes the response button color

            #Returns
                #None

            def update_flashes(self, current_time, green_light,
                                red_light, button_response, button_cycle):
                for flash_type in self.flash_states.keys():
                    if self.flash_states[flash_type]:
                        if (current_time - self.flash_start_times[flash_type]) < self.flash_durations[flash_type]:
                            if flash_type == 'gl' and green_light is not None:
                                green_light.fillColor = [0.1294, 0.8667, 0.1294] #Flashes to a lime green
                            elif flash_type == 'rl' and red_light is not None:
                                red_light.fillColor = [0.8667, 0.1294, 0.1294] #Flashes to a salmon pink
                            elif flash_type == 'rb' and button_response is not None:
                                button_response.lineColor = button_response.fillColor #Object border will temporarily change to match .fillColor
                            elif flash_type == 'cycle' and button_cycle is not None:
                                button_cycle.fillColor = [0.8549, 0.8549, 0.8549] #Flashes a lighter gray
                        else: #Returns to original colors
                            self.flash_states[flash_type] = False
                            if flash_type == 'gl' and green_light is not None:
                                green_light.fillColor = [-1.0000, -0.3020, -1.0000]
                            elif flash_type == 'rl' and red_light is not None:
                                red_light.fillColor = [-0.3020, -1.0000, -1.0000]
                            elif flash_type == 'rb' and button_response is not None:
                                button_response.lineColor = [0, 0, 0]
                            elif flash_type == 'cycle' and button_cycle is not None:
                                button_cycle.fillColor = [0.6549, 0.6549, 0.6549]


        #Retrieves a new schedule from available schedules

        #Parameters
        #__________
        #None

        #Returns
        #-------
        #selected_schedule: string
            #The schedule that is selected.

        #None: None
            #If there are no available schedules, then None is returned.

        def get_new_schedule():
            print(Selection_type.method)
            available_schedules = list(set(all_schedules) - set(used_schedules))
            print(all_schedules)
            print(used_schedules)
            print(f"available_schedules: {available_schedules}")
            if len(available_schedules) > 0:
                if Selection_type.method=='random':
                    selected_schedule = choice(available_schedules) #Pseudorandom selection on an available schedule
                else:
                    all_schedules.sort()
                    selected_schedule = available_schedules[0]
                used_schedules.append(selected_schedule) #Choosen schedule is added to used_schedules
                return selected_schedule
            else: #If there are no available schedules, then it will return None
                return None

        #Plays sounds

        #Parameters:
            #sound_obj: object
                #Sounds to be played
            #current_sound: object
                #Sets a sound, initialized as None

        #Returns:
            #object:
                #sound_obj, sound to be played

        def play_sound(sound_obj, current_sound=None):
            if current_sound is not None and current_sound.status == sound.STARTED:
                current_sound.stop()
            sound_obj.play()
            return sound_obj

        #Logic for space key. Contains a list of conditions for
        #earning or losing a point.

        #Parameters:
            #t: float
                #Current time
            #schedule_manager: class
                #Handles the importation of schedule data
            #flash_manager: class
                #Handles flashes
            #points: integer
                #How many points the participant has earn
            #button_response: object
                #The response button
            #press_blue_earn_index: integer
                #How many times the buttone has been pressed
                #while blue until reinforced for blue presses
            #press_blue_loss_index: integer
                #How many times the buttone has been pressed
                #while blue until punished for blue presses
            #press_yellow_earn_index: integer
                #How many times the buttone has been pressed
                #while yellow until reinforced for yellow presses
            #press_blue_loss_index: integer
                #How many times the buttone has been pressed
                #while yellow until punishment for yellow presses
            #blue_interval_earn_value: tuple
                #A value compared against the probability of reinforcement
                #for blue RI schedule. Is between 0 and 1
            #blue_interval_loss_value: tuple
                #A value compared against the probability of punishment
                #for blue RI schedule. Is between 0 and 1
            #yellow_interval_earn_value: tuple
                #A value compared against the probability of reinforcement
                #for yellow RI schedule. Is between 0 and 1
            #yellow_interval_loss_value: tuple
                #A value compared against the probability of punishment
                #for yellow RI schedule. Is between 0 and 1

        #Return
        #------
        #point_earned: integer
            #A ternary value indicating whether a point was
            #gained, lost, or remained the same

        #Returns are otherwise the same as parameters,
        #bar t and classes

        def handle_space_key(t, schedule_manager, flash_manager, points, button_response,
                             press_blue_earn_index, press_blue_loss_index,
                             press_yellow_earn_index, press_yellow_loss_index, sounds):

            #Handles reinforcement (earning) and punishment (loss) for both interval (time-based)
            #and ratio (press-based) schedules.

            #Parameters:
                #t: float
                    #Current time in the routine.
                #schedule_manager: object
                    #Manages schedule logic and intervals.
                #flash_manager: object
                    #Handles flashing lights for reinforcement and punishment.
                #points: int
                    #Current point total.
                #button_response: object
                    #The response button (blue or yellow).
                #press_blue_earn_index, press_blue_loss_index: int
                    #Current count of button presses for blue earning and loss schedules.
                #press_yellow_earn_index, press_yellow_loss_index: int
                    #Current count of button presses for yellow earning and loss schedules.

            #Returns:
                #Updated variables for points, indices, and any state changes.

            point_earned = 0 #No point earned as a default

            ding = sounds['ding'] if sounds else None
            womp = sounds['womp'] if sounds else None

            if (button_response.fillColor == [-1, -1, 1]).all(): #If blue
                if (0 < schedule_manager.blue_i < float('inf')) or (0 < schedule_manager.blue_random_i < float('inf') and in_changeover_delay == False): #Interval schedules
                    if t >= schedule_manager.next_blue_earn_time:
                        points += int(schedule_manager.blue_mag)
                        point_earned = 1
                        schedule_manager.blue_fh_index += 1
                        schedule_manager.next_blue_earn_time = schedule_manager.calculate_next_blue_earn_time(button_response)
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t)
                            if ding is not None:
                                current_sound = play_sound(ding)

                elif (0 < schedule_manager.blue_r < float('inf')) or (0 < schedule_manager.blue_random_r < float('inf')) and in_changeover_delay == False:#Ratio schedules
                    press_blue_earn_index += 1
                    if press_blue_earn_index >= round(schedule_manager.calculate_next_press_earn_requirement(button_response)):
                        points += int(schedule_manager.blue_mag)
                        point_earned = 1
                        press_blue_earn_index = 0
                        schedule_manager.blue_fh_index += 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t)
                            if ding is not None:
                                current_sound = play_sound(ding)
                """
                This condition is current vestigial. I may re-add the probability per interval condition if there is demand.

                elif schedule_manager.blue_random_r > 0:
                    blue_ratio_earn_value = random_float()
                    if schedule_manager.blue_random_r_chance >= blue_ratio_earn_value:
                        points += int(schedule_manager.blue_mag)
                        point_earned = 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t) # Start green light flash
                            current_sound = play_sound(ding)

                elif schedule_manager.blue_random_i > 0 and schedule_manager.blue_random_i != float('inf'):
                   if schedule_manager.blue_random_i_chance > schedule_manager.blue_interval_earn_value:
                        points += int(schedule_manager.blue_mag)
                        schedule_manager.blue_interval_earn_value = 1
                        point_earned = 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t) # Start green light flash
                            current_sound = play_sound(ding)
                """
                #Loss logic
                if (0 < schedule_manager.blue_pun_i < float('inf')) or (0 < schedule_manager.blue_pun_random_i < float('inf')) and in_changeover_delay == False:
                        points -= int(schedule_manager.blue_pun_mag)
                        point_earned = -1
                        schedule_manager.blue_pun_fh_index += 1
                        schedule_manager.next_blue_loss_time = schedule_manager.calculate_next_blue_loss_time(button_response)
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            if womp is not None:
                                current_sound = play_sound(womp)

                elif (0 < schedule_manager.blue_pun_r < float('inf')) or (0 < schedule_manager.blue_pun_random_r < float('inf')) and in_changeover_delay == False:
                    press_blue_loss_index += 1
                    if press_blue_loss_index >= round(schedule_manager.calculate_next_press_loss_requirement(button_response)):
                        points -= int(schedule_manager.blue_pun_mag)
                        point_earned = -1
                        press_blue_loss_index = 0
                        schedule_manager.blue_pun_fh_index += 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            if womp is not None:
                                current_sound = play_sound(womp)
                """
                elif schedule_manager.blue_pun_random_r > 0 and schedule_manager.blue_pun_random_r != -float('inf'):
                    blue_ratio_loss_value = random_float()
                    if schedule_manager.blue_pun_random_r_chance >= blue_ratio_loss_value:
                        points -= int(schedule_manager.blue_pun_mag)
                        point_earned = -1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            current_sound = play_sound(womp

                #elif schedule_manager.blue_pun_random_i > 0 and schedule_manager.blue_pun_random_i != -float('inf'):
                    #if schedule_manager.blue_pun_random_i_chance > schedule_manager.blue_interval_loss_value:
                        #points -= int(schedule_manager.blue_pun_mag)
                        #schedule_manager.blue_interval_loss_value = 1
                        #point_earned = -1
                        #if schedule_manager.session_duration - t > 0.3:
                            #flash_manager.start_flash('rl', t)
                            #current_sound = play_sound(womp)
                """
            # Handle Yellow Button
            elif (button_response.fillColor == [1, 1, -1]).all(): #If yellow
                # Earning Logic
                if (0 < schedule_manager.yellow_i < float('inf')) or (0 < schedule_manager.yellow_random_i < float('inf')) and in_changeover_delay == False:
                    if t >= schedule_manager.next_yellow_earn_time:
                        points += int(schedule_manager.yellow_mag)
                        point_earned = 1
                        schedule_manager.yellow_fh_index += 1
                        schedule_manager.next_yellow_earn_time = schedule_manager.calculate_next_yellow_earn_time(button_response)
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t)
                            if ding is not None:
                                current_sound = play_sound(ding)

                elif (0 < schedule_manager.yellow_r < float('inf')) or (0 < schedule_manager.yellow_random_r < float('inf')) and in_changeover_delay == False:
                    press_yellow_earn_index += 1
                    if press_yellow_earn_index >= round(schedule_manager.calculate_next_press_earn_requirement(button_response)):
                        points += int(schedule_manager.yellow_mag)
                        point_earned = 1
                        press_yellow_earn_index = 0
                        schedule_manager.yellow_fh_index += 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t)
                            if ding is not None:
                                current_sound = play_sound(ding)

                """
                elif schedule_manager.yellow_random_r > 0 and schedule_manager.yellow_random_r != -float('inf'):
                    yellow_ratio_earn_value = random_float()
                    if schedule_manager.yellow_random_r_chance >= yellow_ratio_earn_value:
                        points += int(schedule_manager.blue_mag)
                        point_earned = 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t)
                            current_sound = play_sound(ding)

                elif schedule_manager.yellow_random_i > 0 and schedule_manager.yellow_random_i != -float('inf'):
                    if schedule_manager.yellow_random_i_chance > schedule_manager.yellow_interval_earn_value:
                        points += int(schedule_manager.yellow_mag)
                        schedule_manager.yellow_interval_earn_value = 1
                        point_earned = 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('gl', t)
                            current_sound = play_sound(ding)
                """
                #Loss Logic
                if (0 < schedule_manager.yellow_pun_i < float('inf')) or (0 < schedule_manager.yellow_pun_random_i < float('inf')) and in_changeover_delay == False:
                    if t >= schedule_manager.calculate_next_yellow_loss_time(button_response):
                        points -= int(schedule_manager.yellow_pun_mag)
                        point_earned = -1
                        schedule_manager.yellow_pun_fh_index += 1
                        schedule_manager.next_yellow_loss_time = schedule_manager.calculate_next_yellow_loss_time(button_response)
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            if womp is not None:
                                current_sound = play_sound(womp)

                elif (0 < schedule_manager.yellow_pun_r < float('inf')) or (0 < schedule_manager.yellow_pun_random_r < float('inf')) and in_changeover_delay == False: # Ratio schedule (press-based)
                    press_yellow_loss_index += 1
                    if press_yellow_loss_index >= round(schedule_manager.calculate_next_press_loss_requirement(button_response)):
                        points -= int(schedule_manager.yellow_pun_mag)
                        point_earned = -1
                        press_yellow_loss_index = 0
                        schedule_manager.yellow_pun_fh_index += 1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            if womp is not None:
                                current_sound = play_sound(womp)

                """
                elif schedule_manager.yellow_pun_random_r > 0 and schedule_manager.yellow_pun_random_r != -float('inf'):
                    yellow_ratio_loss_value = random_float()
                    if schedule_manager.yellow_pun_random_r_chance >= yellow_ratio_loss_value:
                        points -= int(schedule_manager.yellow_pun_mag)
                        point_earned = -1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            current_sound = play_sound(womp)

                elif schedule_manager.yellow_pun_random_i > 0 and schedule_manager.yellow_pun_random_i != -float('inf'):
                    if schedule_manager.yellow_pun_random_i_chance > schedule_manager.yellow_interval_loss_value:
                        points -= int(schedule_manager.yellow_pun_mag)
                        schedule_manager.yellow_interval_loss_value = 1
                        point_earned = -1
                        if schedule_manager.session_duration - t > 0.3:
                            flash_manager.start_flash('rl', t)
                            current_sound = play_sound(womp)
                """

            # Return updated variables
            return (points, point_earned,
                    press_blue_earn_index, press_blue_loss_index,
                    press_yellow_earn_index, press_yellow_loss_index)

        def collect_space():
            thisExp.addData('SessionNumber', f"#{session_number}")
            thisExp.addData('Time', t) #Time is session
            thisExp.addData('Points', points) #Number of points
            thisExp.addData('Point Earned', point_earned) #Ternary value
            thisExp.addData('During Changeover?', in_changeover_delay) #Press occurred outside of changeover delay
            thisExp.addData('CurrentSchedule', current_schedule) #Current schedule
            thisExp.addData('Button', 'Blue' if check_colors(button_response.fillColor, button_color1) else 'Yellow') #button color
            thisExp.nextEntry() #adds entry

        def collect_space_changeover():
            thisExp.addData('SessionNumber', f"#{session_number}")
            thisExp.addData('Time', t) #Time is session
            thisExp.addData('Points', points) #Number of points
            thisExp.addData('Point Earned', 0) #Ternary value
            thisExp.addData('During Changeover?', in_changeover_delay) #Press occurred outside of changeover delay
            thisExp.addData('CurrentSchedule', current_schedule) #Current schedule
            thisExp.addData('Button', 'Blue' if check_colors(button_response.fillColor, button_color1) else 'Yellow') #button color
            thisExp.nextEntry() #adds entry

        #Handles presses related to the tab key.

        #Parameters
        #__________
        #t: float
            #Current time in experiment, same as handle_space_key()

        #flash_manager: class
            #Imports logic for flashes

        #button_response: object
            #The response button, for color changes

        #schedule_manager: class
            #Needed for changeover delay

        def handle_tab_key(t, flash_manager,
                    button_response, schedule_manager):

            flash_manager.start_flash('cycle', t) #Handles flash of the cycle button

            #Switches button color
            if check_colors(button_response.fillColor, button_color1):
                button_response.fillColor = button_color2
            else:
                button_response.fillColor = button_color1

            schedule_manager.last_switch_time = t #value for changeover delay
            return False

        #Collects tab data
        def collect_tab():
            thisExp.addData('SessionNumber', f"#{session_number}")
            thisExp.addData('Time', t) #Session time
            thisExp.addData('Points', points) #Number of points
            thisExp.addData('Point Earned', 'N/A') #No ternary value as the changeover key does not affect current points
            thisExp.addData('During Changeover?', in_changeover_delay)
            thisExp.addData('CurrentSchedule', current_schedule) #Current schedule
            thisExp.addData('Button', 'Tab') #Records button as tab
            thisExp.nextEntry() #Adds entry

        #Draws the experiment, includes logic for schedule lights

        #Paramaters:
            #win: object
                #The PsychoPy window
            #green_light: object
                #Reinforcement light
            #red_light: object
                #Punishment light
            #button_response: object
                #The response button
            #button_cycle: object
                #The switch button
            #switch_text: object
                #button_cycle label
            #points_display: object
                #Shows how many points the subject has earned
            #lights: list of objects
                #Schedule lights, condensed for my own sanity
            #current_schedule: string, but converted to integer
                #The current schedule, determines which schedule light is on.

        def draw_main(win, schedule_manager,
                      context_image,
                      green_light, red_light,
                      button_response, button_cycle,
                      switch_text, points_display,
                      lights, current_schedule):

            win.clearBuffer()

            if schedule_manager.schedule_lights.upper() == 'ON':
                total_lights = len(all_schedules)

                spacing = 0.15

                # --- Compute starting position (AutoJS-compatible) ---
                if total_lights % 2 == 0:
                    start_position = -(total_lights / 2 - 0.5) * spacing
                else:
                    start_position = -int(total_lights / 2) * spacing

                # --- Build positions list (AutoJS translates cleanly) ---
                positions = []
                for i in range(total_lights):
                    positions.append(start_position + i * spacing)

                # --- LOOP THROUGH LIGHTS (NO DICTIONARIES) ---
                # lights = [light_1, light_2, ..., light_n]
                for i in range(total_lights):
                    light = lights[i]

                    # Set position (JS-safe)
                    light.pos = [positions[i], 0.4]

                    # Turn the current light "on" or "off"
                    if (i + 1) == int(current_schedule):
                        light.setFillColor(light_on, 'rgb')
                    else:
                        light.setFillColor(light_off, 'rgb')

                    # Draw
                    light.draw()

            # Draws everything else
            if context_image is not None:
                context_image.draw()
            else:
                pass
            green_light.draw()
            red_light.draw()
            button_response.draw()
            button_cycle.draw()
            switch_text.draw()
            points_display.draw()
            win.flip()

        #Draws objects for the blackout period.

        #Parameters
        #----------
        #win: obj
            #Psychopy window
        #green_light_bo: object
            #Blacked out green_light
        #red_light_bo: object
            #Blacked out red_light
        #timer_text: object
            #Text for the timer, includes countdown
        #points_display: object
            #Shows how many points have been earned
        #response_bo: object
            #Blacked out response button
        #button_cycle_bo:
            #Blacked out switch button

        def draw_break(win, green_light_bo, red_light_bo,
                        timer_text, points_display,
                        response_bo, button_cycle_bo):
            #Draws everything
            green_light_bo.draw()
            red_light_bo.draw()
            points_display.draw()
            response_bo.draw()
            button_cycle_bo.draw()
            timer_text.draw()
            win.flip() #updates screen


        #Makes sure schedule data can include None values.
        #This is essential as you don't want multiple schedules
        #active on the same color.

        #Parameter
        #---------
        #value: string
            #Values are from the DataFrame

        #Return
        #------
        #None: None
            #Allows for values to be none

        def safe_float(value):
            try:
                if isinstance(value, pd.Series):
                    value = value.iloc[0]
                if pd.isna(value):
                    return None
                return float(value)
            except (TypeError, ValueError):
                return None

        def safe_string(value):

            #Cleans and extracts the relevant string value from mixed input formats.

            #Parameters:
            #value (str): The input value to be cleaned and processed.

            #Returns:
            #str: The cleaned string in uppercase, or None if invalid.

            try:
                if isinstance(value, pd.Series):
                    value = value.iloc[0]  # Handle series objects
                if pd.isna(value) or not isinstance(value, str):
                    return None  # Return None for invalid or empty values
                return str(value).strip().split()[-1].upper()  # Extract last word and clean
            except Exception:
                return None

        def safe_tuple(value):
            try:
                if isinstance(value, pd.Series):
                    value = value.iloc[0]
                if pd.isna(value):
                    return None
                if isinstance(value, str):
                    return tuple(eval(value))
                return tuple(value)
            except (TypeError, ValueError, SyntaxError):
                return None

        def safe_bool(value):
            # Handle Series
            if isinstance(value, pd.Series):
                if len(value) == 0:
                    return False
                value = value.iloc[0]

            # Handle NaN / None
            if value is None or pd.isna(value):
                return False

            # Normalize
            value = str(value).strip().lower()

            return value not in ['x', '', '0', 'false', 'none']

        #Function to handle blackout periods.

        #Parameters
        #----------
        #win: object
            #PsychoPy window
        #blackout_timer: object
            #Gives a countdown for the blackout period
        #points_display: object
            #Shows total points earned
        #response_bo: object
            #Blacked out response button
        #button_cycle_bo: object
            #Blacked out switch button
        #green_light_bo: object
            #Blacked out green_light
        #red_light_bo: object
            #Blacked out red_light

        def handle_blackout_period(win, blackout_timer,
                                points_display, response_bo,
                                button_cycle_bo, green_light_bo,
                                red_light_bo):
            #Initializes blackout period
            blackout_period = True
            blackout_start_time = core.getTime()
            blackout_timer.reset() #resets blackout timer

            while blackout_period:
                current_time = core.getTime()
                elapsed_time = current_time - blackout_start_time
                remaining_time = max(0, int(blackout_timer.getTime())) #Value for timer
                end_keys = event.getKeys(['escape'])
                keys = event.getKeys(['return'])
                if 'escape' in end_keys:
                    sys.exit()
                if remaining_time > 0:
                    #Countdown
                    timer_text = visual.TextStim(win,
                                        text=f"Time Remaining: {remaining_time}",
                                        pos=(0, 0), height=0.05, color='black')

                    draw_break(win, green_light_bo, red_light_bo,
                                timer_text, points_display, response_bo,
                                button_cycle_bo)
                    if 'return' in keys:
                        keys.remove('return')
                else:
                    #Prompts the user to hit 'enter' to advance to the next session
                    timer_text = visual.TextStim(win,
                                text="Hit 'enter' to continue",
                                pos=(0, 0), height=0.05,
                                color='black')

                    #Draws required objects
                    draw_break(win, green_light_bo, red_light_bo,
                                timer_text, points_display,
                                response_bo, button_cycle_bo)

                    #Makes 'enter' a valid input, remember return = enter
                    keys = event.getKeys(['return'])

                    if 'return' in keys: #if enter is pressed
                        blackout_period = False  #blackout period ends
            win.flip() #Updates screen

        def preload_contexts(schedule_df, win):
            context_cache = {}

            for row in schedule_df.to_dict('records'):
                schedule_id = row.get('Schedule_number')  # adjust if different column name
                path = row.get('Context_Path')

                # Skip schedules without a valid context
                if pd.isna(path) or str(path).strip() == '':
                    context_cache[schedule_id] = None
                    continue

                try:
                    pos = safe_tuple(row.get('Context_Position'))
                    size = safe_tuple(row.get('Context_Size'))
                    opacity = row.get('Context_Opacity')
                    depth = row.get('Context_Depth')

                    if pd.isna(opacity):
                        opacity = 1
                    if pd.isna(depth):
                        depth = 0

                    context_image = visual.ImageStim(
                        win=win,
                        name=f'context_{schedule_id}',
                        image=str(path).strip(),
                        pos=pos,
                        size=size,
                        opacity=float(opacity),
                        depth=float(depth)
                    )

                    context_cache[schedule_id] = context_image

                except Exception as e:
                    print(f"Error preloading schedule {schedule_id}: {e}")
                    context_cache[schedule_id] = None

            return context_cache

        def get_context(context_cache, current_schedule):
            return context_cache.get(current_schedule, None)

        def preload_sounds(schedule_df):
            sound_cache = {}
            for row in schedule_df.to_dict('records'):
                schedule_id = row.get('Schedule_number')
                ding_path = row.get('Ding_Path')
                womp_path = row.get('Womp_Path')

                # Skip schedules without valid sound paths
                if (pd.isna(ding_path) or str(ding_path).strip() == '') and \
                   (pd.isna(womp_path) or str(womp_path).strip() == ''):
                    sound_cache[schedule_id] = None
                    continue

                try:
                    ding = sound.Sound(str(ding_path).strip()) if not pd.isna(ding_path) else None
                    womp = sound.Sound(str(womp_path).strip()) if not pd.isna(womp_path) else None
                    sound_cache[schedule_id] = {'ding': ding, 'womp': womp}
                except Exception as e:
                    print(f"Error preloading schedule {schedule_id}: {e}")
                    sound_cache[schedule_id] = None

            return sound_cache

        def get_sounds(sound_cache, current_schedule):
            return sound_cache.get(current_schedule, None)

        #Initialization to band-aid a problem
        button_response.fillColor == button_color1

        context_cache = preload_contexts(schedule_df, win)
        sound_cache = preload_sounds(schedule_df)
      Begin JS Experiment:
        // ─── Utility Functions ───────────────────────────────────────────────────────

        window.list = function(s) {
            if (typeof s === 'string') return s.split('');
            return s;
        };

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        window._pj = _pj;

        window.safeFloat = function(value) {
            if (value === undefined || value === '' || value === 'x') return null;
            const num = parseFloat(value);
            return isNaN(num) ? undefined : num;
        };

        window.safeString = function(value) {
            if (value === undefined || value === null) return undefined;

            const str = String(value).trim();

            if (str === '' || str.toLowerCase() === 'nan' || str.toLowerCase() === 'x') {
                return undefined;
            }

            return str;  // DO NOT modify content
        };

        window.safeBool = function(value) {
            if (value === undefined || value === '' || value === 'x') return false;
            return String(value).trim().toLowerCase() === 'true';
        };

        window.safeTuple = function(value) {
            if (!value) return undefined;

            if (Array.isArray(value)) return value;

            const str = String(value).trim();

            if (str === "" || str === "-1") return undefined;

            // Strip surrounding parens if present, then split on semicolon
            const inner = str.replace(/^\(|\)$/g, '');
            const parts = inner.split(';').map(s => Number(s.trim()));

            if (parts.length < 2 || parts.some(isNaN)) return undefined;

            return [parts[0], parts[1]];
        };

        window.random_float = function(state = [undefined]) {
            return Math.random();
        };

        window.ln = function(x, tol = 1e-9) {
            if (x <= 0) throw new Error("ln undefined for x <= 0");
            if (x === 1) return 0.0;
            function exp_series(y) {
                if (y > 50) return 1e50;
                if (y < -50) return 1e-50;
                let term = 1.0, result = 1.0;
                for (let n = 1; n < 100; n++) {
                    term *= (y / n);
                    result += term;
                    if (Math.abs(term) < 1e-15) break;
                }
                return result;
            }
            let [low, high] = x < 1 ? [-20.0, 0.0] : [0.0, 20.0];
            for (let i = 0; i < 100; i++) {
                if ((high - low) < tol) break;
                const mid = (low + high) / 2;
                exp_series(mid) < x ? (low = mid) : (high = mid);
            }
            return (low + high) / 2;
        };

        window.log_base = function(x, base, tol = 1e-9) {
            if (base <= 0 || base === 1) throw new Error("Base must be positive and not equal to 1");
            return window.ln(x, tol) / window.ln(base, tol);
        };

        window.random_normal = function(mu = 0.0, sigma = 1.0) {
            const u1 = Math.random(), u2 = Math.random();
            const z0 = Math.sqrt(-2.0 * Math.log(u1)) * Math.cos(2.0 * Math.PI * u2);
            return mu + sigma * z0;
        };

        window.random_exponential = function(scale = 1.0) {
            let u = Math.random();
            while (u === 0 || u === 1) u = Math.random();
            return -scale * Math.log(u);
        };

        window.random_permutation = function(n) {
            const arr = (typeof n === 'number') ? Array.from({length: n}, (_, i) => i) : [...n];
            for (let i = arr.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [arr[i], arr[j]] = [arr[j], arr[i]];
            }
            return arr;
        };

        window.choice = function(sequence) {
            return sequence[Math.floor(Math.random() * sequence.length)];
        };

        window.check_colors = function(color1, color2) {
            if (color1.length !== color2.length) return false;
            for (let i = 0; i < color1.length; i++) {
                if (color1[i] !== color2[i]) return false;
            }
            return true;
        };

        // ─── Clock & Sounds ──────────────────────────────────────────────────────────

        window.routine_clock = new util.Clock();
        window.reset_routine_clock = function() { window.routine_clock.reset(); };

        // ─── State Variables ─────────────────────────────────────────────────────────
        window.loop_type = 'sequential';
        window.used_schedules           = [];
        window.switch_enabled           = true;
        window.tab_pressed              = false;
        window.gl_flash                 = false;
        window.rl_flash                 = false;
        window.current_sound            = undefined;
        window.handle_blackout          = false;
        window.session_number           = 0;
        window.points                   = 0;
        window.press_blue_earn_index    = 0;
        window.press_blue_loss_index    = 0;
        window.press_yellow_earn_index  = 0;
        window.press_yellow_loss_index  = 0;
        window.blue_fh_index            = 0;
        window.yellow_fh_index          = 0;
        window.blue_pun_fh_index        = 0;
        window.yellow_pun_fh_index      = 0;
        window.blue_earn_proc_value     = 1;
        window.blue_loss_proc_value     = 1;
        window.yellow_earn_proc_value   = 1;
        window.yellow_loss_proc_value   = 1;
        window.blue_interval_earn_value   = random_float();
        window.yellow_interval_earn_value = random_float();
        window.blue_interval_loss_value   = random_float();
        window.yellow_interval_loss_value = random_float();
        window.in_changeover_delay      = false;
        window.current_schedule         = undefined;
        window.point_earned             = 0;

        // ─── Colors ──────────────────────────────────────────────────────────────────

        window.light_on      = [1, 1, 1];
        window.light_off     = [-1, -1, -1];
        window.button_color1 = [-1, -1, 1];
        window.button_color2 = [1, 1, -1];
        window.light_state   = "off";

        // ─── Visual Stimuli ──────────────────────────────────────────────────────────

        window.green_light = new visual.Rect({
            win: psychoJS.window, name: 'green_light', units: 'height',
            size: [0.2828, 0.2828], fillColor: [-1.0, -0.302, -1.0], colorSpace: 'rgb', pos: [-0.45, 0]
        });
        window.red_light = new visual.Rect({
            win: psychoJS.window, name: 'red_light', units:'height',
            size: [0.2828, 0.2828], fillColor: [-0.302, -1, -1.0], colorSpace: 'rgb', pos: [0.45, 0]
        });
        window.button_response = new visual.Rect({
            win: psychoJS.window, name: 'button_response', units: 'height', lineWidth: 3,
            size: [0.9192, 0.5657], fillColor: [-1, -1, 1], lineColor: new util.Color('grey'), colorSpace: 'rgb', pos: [0, 0], opacity: 1
        });
        window.button_cycle = new visual.Rect({
            win: psychoJS.window, name: 'button_cycle', units: 'height', depth: 1,
            size: [0.9192, 0.1414], fillColor: [0.6549, 0.6549, 0.6549], lineColor: [0, 0, 0], colorSpace: 'rgb', pos: [0, -0.3], opacity: 1
        });
        window.switch_text = new visual.TextStim({
            win: psychoJS.window, name: 'switch_text',
            text: 'Switch', height: 0.05, color: 'black',
            pos: [0, -0.3], opacity: 1, units: 'height', depth: -1
        });
        window.points_display = new visual.TextStim({
            win: psychoJS.window, name: 'points_display',
            text: 'Points: 0', height: 0.05, color: [-1, -1, -1], pos: [0, 0.25]
        });
        window.response_bo = new visual.Rect({
            win: psychoJS.window, name: 'response_bo', units: 'height', lineColor: ['grey'], lineWidth: 3,
            size: [0.9192, 0.5657], fillColor: [0.6549, 0.6549, 0.6549], colorSpace: 'rgb', pos: [0, 0]
        });
        window.timer_text = new visual.TextStim({
            win: psychoJS.window, name: 'timer_text',
            text: 'Time Remaining: 15', height: 0.045, color: 'black', pos: [0, 0]
        });
        window.green_light_bo = new visual.Rect({
            win: psychoJS.window, name: 'green_light_bo', units: 'height',
            size: [0.2828, 0.2828], fillColor: [0.3339, 0.3339, 0.3339], colorSpace: 'rgb', pos: [-0.45, 0]
        });
        window.red_light_bo = new visual.Rect({
            win: psychoJS.window, name: 'red_light_bo', units: 'height',
            size: [0.2828, 0.2828], fillColor: [0.3339, 0.3339, 0.3339], colorSpace: 'rgb', pos: [0.45, 0]
        });
        window.button_cycle_bo = new visual.Rect({
            win: psychoJS.window, name: 'button_cycle_bo', units: 'height', size: [0.9192, 0.1414],
            fillColor: [0.4549, 0.4549, 0.4549], lineColor: [0, 0, 0], colorSpace: 'rgb', pos: [0, -0.3]
        });
        window.goodbye_message = new visual.TextStim({
            win: psychoJS.window, name: 'goodbye_message',
            text: "Thank you for completing the experiment. Your responses are recorded and you are free to leave.",
            height: 0.05, color: [1, 1, 1], pos: [0, 0]
        });

        // ─── Lights Array ─────────────────────────────────────────────────────────────

        window.lights = [];
        const light_positions = [-0.75,-0.6,-0.45,-0.3,-0.15,0,0.15,0.3,0.45,0.6,0.75];
        for (let i = 0; i < 11; i++) {
            window.lights.push(new visual.Rect({
                win: psychoJS.window, name: `light_${i+1}`, units: 'height',
                size: [0.177, 0.177], fillColor: window.light_off, colorSpace: 'rgb',
                pos: [light_positions[i], 0.4]
            }));
        }
        window.light_mapping = {};
        for (let i = 0; i < 11; i++) window.light_mapping[i+1] = window.lights[i];

        // ─── Classes ─────────────────────────────────────────────────────────────────

        window.ScheduleManager = class ScheduleManager {
            constructor(
                blue_i, yellow_i, blue_pun_i, yellow_pun_i,
                blue_r, yellow_r, blue_pun_r, yellow_pun_r,
                blue_random_i, yellow_random_i,
                blue_pun_random_i, yellow_pun_random_i,
                blue_random_r, yellow_random_r,
                blue_pun_random_r, yellow_pun_random_r,
                blue_fh, yellow_fh, blue_pun_fh, yellow_pun_fh,
                blue_fh_n_intervals, yellow_fh_n_intervals,
                blue_pun_fh_n_intervals, yellow_pun_fh_n_intervals,
                blue_fh_type, yellow_fh_type,
                blue_pun_fh_type, yellow_pun_fh_type,
                session_duration,
                blue_mag, yellow_mag,
                blue_pun_mag, yellow_pun_mag,
                changeover_delay, blackout_duration,
                blue_dist_type, yellow_dist_type,
                blue_pun_dist_type, yellow_pun_dist_type,
                sd_blue_interval, sd_yellow_interval,
                sd_blue_pun_interval, sd_yellow_pun_interval,
                schedule_lights,
                context_path, context_position, context_size,
                context_opacity, context_depth,
                ding_path, womp_path, keyboard_path
            ) {

                // Core schedules
                this.blue_i = blue_i || Infinity;
                this.yellow_i = yellow_i || Infinity;
                this.blue_pun_i = blue_pun_i || Infinity;
                this.yellow_pun_i = yellow_pun_i || Infinity;

                this.blue_r = blue_r || Infinity;
                this.yellow_r = yellow_r || Infinity;
                this.blue_pun_r = blue_pun_r || Infinity;
                this.yellow_pun_r = yellow_pun_r || Infinity;

                this.blue_random_i = blue_random_i || Infinity;
                this.yellow_random_i = yellow_random_i || Infinity;
                this.blue_pun_random_i = blue_pun_random_i || Infinity;
                this.yellow_pun_random_i = yellow_pun_random_i || Infinity;

                this.blue_random_r = blue_random_r || -Infinity;
                this.yellow_random_r = yellow_random_r || -Infinity;
                this.blue_pun_random_r = blue_pun_random_r || -Infinity;
                this.yellow_pun_random_r = yellow_pun_random_r || -Infinity;

                this.blue_fh = blue_fh;
                this.yellow_fh = yellow_fh;
                this.blue_pun_fh = blue_pun_fh;
                this.yellow_pun_fh = yellow_pun_fh;

                this.blue_fh_n_intervals = blue_fh_n_intervals || 0;
                this.yellow_fh_n_intervals = yellow_fh_n_intervals || 0;
                this.blue_pun_fh_n_intervals = blue_pun_fh_n_intervals || 0;
                this.yellow_pun_fh_n_intervals = yellow_pun_fh_n_intervals || 0;

                this.blue_fh_type = blue_fh_type || false;
                this.yellow_fh_type = yellow_fh_type || false;
                this.blue_pun_fh_type = blue_pun_fh_type || false;
                this.yellow_pun_fh_type = yellow_pun_fh_type || false;

                this.session_duration = session_duration || 1;

                this.blue_mag = blue_mag || 1;
                this.yellow_mag = yellow_mag || 1;
                this.blue_pun_mag = blue_pun_mag || 1;
                this.yellow_pun_mag = yellow_pun_mag || 1;

                this.changeover_delay = changeover_delay || 0;

                this.blackout_duration = blackout_duration || 5;

                this.blue_dist_type = blue_dist_type;
                this.yellow_dist_type = yellow_dist_type;
                this.blue_pun_dist_type = blue_pun_dist_type;
                this.yellow_pun_dist_type = yellow_pun_dist_type;

                this.sd_blue_interval = sd_blue_interval || 0;
                this.sd_yellow_interval = sd_yellow_interval || 0;
                this.sd_blue_pun_interval = sd_blue_pun_interval || 0;
                this.sd_yellow_pun_interval = sd_yellow_pun_interval || 0;

                this.schedule_lights = schedule_lights || "off";

                this.context_path =
                (typeof context_path === "string" && context_path !== "-1")
                    ? context_path
                    : null;
                this.context_position = context_position || [0, 0];
                this.context_size =
                (Array.isArray(context_size) && context_size.length === 2)
                    ? context_size
                    : [2, 2];
                this.context_opacity = context_opacity || 1;
                this.context_depth = context_depth || -1;

                this.ding_path =
                    (typeof ding_path === "string" && ding_path !== "-1")
                        ? ding_path
                        : null;

                this.womp_path =
                    (typeof womp_path === "string" && womp_path !== "-1")
                        ? womp_path
                        : null;

                this.keyboard_path = keyboard_path || null;

                // FH tracking
                this.blue_fh_index = 0;
                this.yellow_fh_index = 0;
                this.blue_pun_fh_index = 0;
                this.yellow_pun_fh_index = 0;

                this.blue_fh_list = [];
                this.yellow_fh_list = [];
                this.blue_pun_fh_list = [];
                this.yellow_pun_fh_list = [];

                this.generate_fleshler_hoffman_list();

                // Timing
                this.next_blue_earn_time = 0;
                this.next_blue_loss_time = 0;
                this.next_yellow_earn_time = 0;
                this.next_yellow_loss_time = 0;

                this.last_switch_time = 0;

                this.interval_start = window.routine_clock.getTime();
                this.reset_times();
            }

            calculate_fleshler_hoffman(mean, n_intervals) {
                const e = Math.E;
                if (!mean || !n_intervals || n_intervals <= 0) return [0];

                n_intervals = parseInt(n_intervals);
                const intervals = [];

                for (let n = 1; n <= n_intervals; n++) {
                    let tn;
                    if (n === n_intervals) {
                        tn = mean * (1 + window.log_base(n_intervals, e));
                    } else {
                        tn = mean * (
                            1 + window.log_base(n_intervals, e) +
                            (n_intervals - n) * window.log_base(n_intervals - n, e) -
                            (n_intervals - n + 1) * window.log_base(n_intervals - n + 1, e)
                        );
                    }
                    intervals.push(tn);
                }
                return intervals;
            }

            generate_fleshler_hoffman_list() {
                const process = (flag, i_val, r_val, n, type) => {
                    if (!flag) return [Infinity];

                    const value = (i_val > 0 && i_val !== Infinity) ? i_val : r_val;
                    if (value <= 0 || value === Infinity) return [Infinity];

                    const vals = this.calculate_fleshler_hoffman(value, n);

                    try {
                        const t = type.toUpperCase();
                        if (t === "PROGRESSIVE") return [...vals].sort((a,b)=>a-b);
                        if (t === "REGRESSIVE") return [...vals].sort((a,b)=>b-a);
                        if (t === "RANDOM") return window.random_permutation(vals);
                        throw new Error("Invalid FH type");
                    } catch {
                        return [Infinity];
                    }
                };

                this.blue_fh_list       = process(this.blue_fh, this.blue_i, this.blue_r, this.blue_fh_n_intervals, this.blue_fh_type);
                this.yellow_fh_list     = process(this.yellow_fh, this.yellow_i, this.yellow_r, this.yellow_fh_n_intervals, this.yellow_fh_type);
                this.blue_pun_fh_list   = process(this.blue_pun_fh, this.blue_pun_i, this.blue_pun_r, this.blue_pun_fh_n_intervals, this.blue_pun_fh_type);
                this.yellow_pun_fh_list = process(this.yellow_pun_fh, this.yellow_pun_i, this.yellow_pun_r, this.yellow_pun_fh_n_intervals, this.yellow_pun_fh_type);
            }

            // ===== TIME-BASED =====
            calculate_next_blue_earn_time() {
                let interval;

                if (this.blue_fh && this.blue_i > 0 && this.blue_i !== Infinity) {
                    interval = this.blue_fh_list[this.blue_fh_index % this.blue_fh_list.length];
                } else {
                    interval = (this.blue_dist_type === "GAUSSIAN")
                        ? Math.max(window.random_normal(this.blue_random_i, this.sd_blue_interval), 0)
                        : window.random_exponential(this.blue_random_i);
                }

                return window.routine_clock.getTime() + interval;
            }

            calculate_next_yellow_earn_time() {
                let interval;

                if (this.yellow_fh && this.yellow_i > 0 && this.yellow_i !== Infinity) {
                    interval = this.yellow_fh_list[this.yellow_fh_index % this.yellow_fh_list.length];
                } else {
                    interval = (this.yellow_dist_type === "GAUSSIAN")
                        ? Math.max(window.random_normal(this.yellow_random_i, this.sd_yellow_interval), 0)
                        : window.random_exponential(this.yellow_random_i);
                }

                return window.routine_clock.getTime() + interval;
            }

            calculate_next_blue_loss_time() {
                let interval;

                if (this.blue_pun_fh && this.blue_pun_i > 0 && this.blue_pun_i !== Infinity) {
                    interval = this.blue_pun_fh_list[this.blue_pun_fh_index % this.blue_pun_fh_list.length];
                } else {
                    interval = (this.blue_pun_dist_type === "GAUSSIAN")
                        ? Math.max(window.random_normal(this.blue_pun_random_i, this.sd_blue_pun_interval), 0)
                        : window.random_exponential(this.blue_pun_random_i);
                }

                return window.routine_clock.getTime() + interval;
            }

            calculate_next_yellow_loss_time() {
                let interval;

                if (this.yellow_pun_fh && this.yellow_pun_i > 0 && this.yellow_pun_i !== Infinity) {
                    interval = this.yellow_pun_fh_list[this.yellow_pun_fh_index % this.yellow_pun_fh_list.length];
                } else {
                    interval = (this.yellow_pun_dist_type === "GAUSSIAN")
                        ? Math.max(window.random_normal(this.yellow_pun_random_i, this.sd_yellow_pun_interval), 0)
                        : window.random_exponential(this.yellow_pun_random_i);
                }

                return window.routine_clock.getTime() + interval;
            }

            reset_times() {
                window.reset_routine_clock();
                this.next_blue_earn_time   = this.calculate_next_blue_earn_time();
                this.next_yellow_earn_time = this.calculate_next_yellow_earn_time();
                this.next_blue_loss_time   = this.calculate_next_blue_loss_time();
                this.next_yellow_loss_time = this.calculate_next_yellow_loss_time();
            }
        };


        window.FlashManager = class FlashManager {
            constructor() {
                this.flash_states      = { gl: false, rl: false, switch_cod: false, rb: false, cycle: false };
                this.flash_start_times = { gl: 0,     rl: 0,     switch_cod: 0,     rb: 0,     cycle: 0     };
                this.flash_durations   = { gl: 0.25,  rl: 0.25,  switch_cod: 0.5,   rb: 0.1,   cycle: 0.1   };
            }

            start_flash(flash_type, start_time) {
                this.flash_states[flash_type] = true;
                this.flash_start_times[flash_type] = start_time;
            }

            update_flashes(current_time, green_light, red_light, button_response, button_cycle) {

                const safeFill = (stim, color) => {
                    if (stim && typeof stim.setFillColor === "function") {
                        stim.setFillColor(color);
                    }
                };

                const safeLine = (stim, color) => {
                    if (stim && typeof stim.setLineColor === "function") {
                        stim.setLineColor(color);
                    }
                };

                const safeDraw = (stim, val) => {
                    if (stim && typeof stim.setAutoDraw === "function") {
                        stim.setAutoDraw(val);
                    }
                };

                for (const flash_type of Object.keys(this.flash_states)) {

                    if (!this.flash_states[flash_type]) continue;

                    const elapsed = current_time - this.flash_start_times[flash_type];

                    if (elapsed < this.flash_durations[flash_type]) {

                        if (flash_type === "gl") {
                            safeFill(green_light, [0.1294, 0.8667, 0.1294]);
                        }

                        else if (flash_type === "rl") {
                            safeFill(red_light, [0.8667, 0.1294, 0.1294]);
                        }

                        else if (flash_type === "rb") {
                            if (button_response && button_response.fillColor) {

                                const fill = button_response.fillColor;

                                const isColor = (a, b) =>
                                    a && b && a[0] === b[0] && a[1] === b[1] && a[2] === b[2];

                                if (isColor(fill, button_color1)) {
                                    safeLine(button_response, new util.Color('blue'));
                                }
                                else if (isColor(fill, button_color2)) {
                                    safeLine(button_response, new util.Color('yellow'));
                                }
                                else {
                                    safeLine(button_response, new util.Color('blue'));
                                }
                            }
                        }

                        else if (flash_type === "cycle") {
                            safeFill(button_cycle, [0.8549, 0.8549, 0.8549]);
                            safeDraw(window.switch_text, true);
                        }

                    } else {

                        this.flash_states[flash_type] = false;

                        if (flash_type === "gl") {
                            safeFill(green_light, [-1.0, -0.302, -1.0]);
                        }

                        else if (flash_type === "rl") {
                            safeFill(red_light, [-0.302, -1.0, -1.0]);
                        }

                        else if (flash_type === "rb") {
                            safeLine(button_response, new util.Color('grey'));
                        }

                        else if (flash_type === "cycle") {
                            safeFill(button_cycle, [0.6549, 0.6549, 0.6549]);
                            safeDraw(window.switch_text, true);
                        }
                    }
                }
            }
        };

        // ─── Top-Level Functions ─────────────────────────────────────────────────────
        window.get_new_schedule = function() {
            const available = [...new Set(window.all_schedules.filter(
                s => !window.used_schedules.includes(s)
            ))];

            if (available.length === 0) return null;

            let selected;
            // Guard: Selection_type may not be initialized yet on first call
            const method = (window.Selection_type && window.Selection_type.method)
                ? window.Selection_type.method
                : 'sequential';

            if (method === "random") {
                selected = window.choice(available);
            } else {
                available.sort();
                selected = available[0];
            }

            window.used_schedules.push(selected);
            return selected;
        };

        window.play_sound = function(sound_obj) {
            if (window.current_sound !== undefined && window.current_sound.status === sound.STARTED) {
                window.current_sound.stop();
            }
            sound_obj.play();
            return sound_obj;
        };

        window.handle_space_key = function (
            t,
            schedule_manager,
            flash_manager,
            points,
            button_response,
            press_blue_earn_index,
            press_blue_loss_index,
            press_yellow_earn_index,
            press_yellow_loss_index,
            sounds
        ) {
            let point_earned = 0;

            const ding = sounds ? sounds["ding"] : null;
            const womp = sounds ? sounds["womp"] : null;

            // --- SAFETY ---
            if (!button_response || !button_response.fillColor) {
                console.log("button_response not ready");
                return [
                    points,
                    point_earned,
                    press_blue_earn_index,
                    press_blue_loss_index,
                    press_yellow_earn_index,
                    press_yellow_loss_index
                ];
            }

            const isBlue = window.check_colors(button_response.fillColor, window.button_color1);
            const isYellow = window.check_colors(button_response.fillColor, window.button_color2);

            const nearEnd = (schedule_manager.session_duration - t) > 0.3;

            // =====================
            // BLUE
            // =====================
            if (isBlue) {

                // Interval
                if (
                    (0 < schedule_manager.blue_i && schedule_manager.blue_i < Infinity) ||
                    (0 < schedule_manager.blue_random_i && schedule_manager.blue_random_i < Infinity)
                ) {
                    if (t >= schedule_manager.next_blue_earn_time) {
                        points += parseInt(schedule_manager.blue_mag);
                        point_earned = 1;

                        schedule_manager.blue_fh_index += 1;
                        schedule_manager.next_blue_earn_time =
                            schedule_manager.calculate_next_blue_earn_time();

                        if (nearEnd) {
                            flash_manager.start_flash("gl", t);
                            if (ding) window.play_sound(ding);
                        }
                    }
                }

                // Ratio
                else if (
                    (0 < schedule_manager.blue_r && schedule_manager.blue_r < Infinity) ||
                    (0 < schedule_manager.blue_random_r && schedule_manager.blue_random_r < Infinity)
                ) {
                    press_blue_earn_index++;

                    if (press_blue_earn_index >= Math.round(schedule_manager.calculate_next_press_earn_requirement(button_response))) {
                        points += parseInt(schedule_manager.blue_mag);
                        point_earned = 1;

                        press_blue_earn_index = 0;
                        schedule_manager.blue_fh_index += 1;

                        if (nearEnd) {
                            flash_manager.start_flash("gl", t);
                            if (ding) window.play_sound(ding);
                        }
                    }
                }

                // Punishment interval
                if (
                    (0 < schedule_manager.blue_pun_i && schedule_manager.blue_pun_i < Infinity) ||
                    (0 < schedule_manager.blue_pun_random_i && schedule_manager.blue_pun_random_i < Infinity)
                ) {
                    if (t >= schedule_manager.next_blue_loss_time) {
                        points -= parseInt(schedule_manager.blue_pun_mag);
                        point_earned = -1;

                        schedule_manager.blue_pun_fh_index += 1;
                        schedule_manager.next_blue_loss_time =
                            schedule_manager.calculate_next_blue_loss_time();

                        if (nearEnd) {
                            flash_manager.start_flash("rl", t);
                            if (womp) window.play_sound(womp);
                        }
                    }
                }

                // Punishment ratio
                else if (
                    (0 < schedule_manager.blue_pun_r && schedule_manager.blue_pun_r < Infinity) ||
                    (0 < schedule_manager.blue_pun_random_r && schedule_manager.blue_pun_random_r < Infinity)
                ) {
                    press_blue_loss_index++;

                    if (press_blue_loss_index >= Math.round(schedule_manager.calculate_next_press_loss_requirement(button_response))) {
                        points -= parseInt(schedule_manager.blue_pun_mag);
                        point_earned = -1;

                        press_blue_loss_index = 0;
                        schedule_manager.blue_pun_fh_index += 1;

                        if (nearEnd) {
                            flash_manager.start_flash("rl", t);
                            if (womp) window.play_sound(womp);
                        }
                    }
                }
            }

            // =====================
            // YELLOW
            // =====================
            if (isYellow) {

                // Interval
                if (
                    (0 < schedule_manager.yellow_i && schedule_manager.yellow_i < Infinity) ||
                    (0 < schedule_manager.yellow_random_i && schedule_manager.yellow_random_i < Infinity)
                ) {
                    if (t >= schedule_manager.next_yellow_earn_time) {
                        points += parseInt(schedule_manager.yellow_mag);
                        point_earned = 1;

                        schedule_manager.yellow_fh_index += 1;
                        schedule_manager.next_yellow_earn_time =
                            schedule_manager.calculate_next_yellow_earn_time();

                        if (nearEnd) {
                            flash_manager.start_flash("gl", t);
                            if (ding) window.play_sound(ding);
                        }
                    }
                }

                // Ratio
                else if (
                    (0 < schedule_manager.yellow_r && schedule_manager.yellow_r < Infinity) ||
                    (0 < schedule_manager.yellow_random_r && schedule_manager.yellow_random_r < Infinity)
                ) {
                    press_yellow_earn_index++;

                    if (press_yellow_earn_index >= Math.round(schedule_manager.calculate_next_press_earn_requirement(button_response))) {
                        points += parseInt(schedule_manager.yellow_mag);
                        point_earned = 1;

                        press_yellow_earn_index = 0;
                        schedule_manager.yellow_fh_index += 1;

                        if (nearEnd) {
                            flash_manager.start_flash("gl", t);
                            if (ding) window.play_sound(ding);
                        }
                    }
                }

                // Punishment interval
                if (
                    (0 < schedule_manager.yellow_pun_i && schedule_manager.yellow_pun_i < Infinity) ||
                    (0 < schedule_manager.yellow_pun_random_i && schedule_manager.yellow_pun_random_i < Infinity)
                ) {
                    if (t >= schedule_manager.next_yellow_loss_time) {
                        points -= parseInt(schedule_manager.yellow_pun_mag);
                        point_earned = -1;

                        schedule_manager.yellow_pun_fh_index += 1;
                        schedule_manager.next_yellow_loss_time =
                            schedule_manager.calculate_next_yellow_loss_time();

                        if (nearEnd) {
                            flash_manager.start_flash("rl", t);
                            if (womp) window.play_sound(womp);
                        }
                    }
                }

                // Punishment ratio
                else if (
                    (0 < schedule_manager.yellow_pun_r && schedule_manager.yellow_pun_r < Infinity) ||
                    (0 < schedule_manager.yellow_pun_random_r && schedule_manager.yellow_pun_random_r < Infinity)
                ) {
                    press_yellow_loss_index++;

                    if (press_yellow_loss_index >= Math.round(schedule_manager.calculate_next_press_loss_requirement(button_response))) {
                        points -= parseInt(schedule_manager.yellow_pun_mag);
                        point_earned = -1;

                        press_yellow_loss_index = 0;
                        schedule_manager.yellow_pun_fh_index += 1;

                        if (nearEnd) {
                            flash_manager.start_flash("rl", t);
                            if (womp) window.play_sound(womp);
                        }
                    }
                }
            }

            return [
                points,
                point_earned,
                press_blue_earn_index,
                press_blue_loss_index,
                press_yellow_earn_index,
                press_yellow_loss_index
            ];
        };

        window.collect_space = function() {
            psychoJS.experiment.addData("SessionNumber", `#${window.session_number}`);
            psychoJS.experiment.addData("Time", window.t);
            psychoJS.experiment.addData("Points", window.points);
            psychoJS.experiment.addData("Point Earned", window.point_earned);
            psychoJS.experiment.addData("During Changeover?", window.in_changeover_delay);
            psychoJS.experiment.addData("CurrentSchedule", window.current_schedule);
            psychoJS.experiment.addData("Button", window.check_colors(window.button_response.fillColor, window.button_color1) ? "Blue" : "Yellow");
            psychoJS.experiment.nextEntry();
        };

        window.handle_tab_key = function(t, flash_manager) {
            flash_manager.start_flash("cycle", t);
            if (window.check_colors(window.button_response.fillColor, window.button_color1)) {
                window.button_response.fillColor = window.button_color2;
            } else {
                window.button_response.fillColor = window.button_color1;
            }
            window.schedule_manager.last_switch_time = t;
            return false;
        };

        window.collect_tab = function() {
            psychoJS.experiment.addData("SessionNumber", `#${window.session_number}`);
            psychoJS.experiment.addData("Time", window.t);
            psychoJS.experiment.addData("Points", window.points);
            psychoJS.experiment.addData("Point Earned", "N/A");
            psychoJS.experiment.addData("During Changeover?", window.in_changeover_delay);
            psychoJS.experiment.addData("CurrentSchedule", window.current_schedule);
            psychoJS.experiment.addData("Button", "Tab");
            psychoJS.experiment.nextEntry();
        };

        window.draw_main = function(schedule_manager, context_image) {
            // Turn OFF blackout stimuli
            window.green_light_bo.setAutoDraw(false);
            window.red_light_bo.setAutoDraw(false);
            window.response_bo.setAutoDraw(false);
            window.button_cycle_bo.setAutoDraw(false);
            window.timer_text.setAutoDraw(false);

            if (window.context_image) window.context_image.draw();

            if (window.lights && window.lights.length > 0) {
                if (schedule_manager.schedule_lights.toLowerCase() === "on") {
                    const total = window.all_schedules.length;
                    const spacing = 0.15;
                    const start = (total % 2 === 0)
                        ? -(total/2 - 0.5) * spacing
                        : -Math.floor(total/2) * spacing;
                    for (let i = 0; i < window.lights.length; i++) {
                        const light = window.lights[i];
                        if (i < total) {
                            light.setAutoDraw(true);
                            light.pos = [start + i * spacing, 0.4];
                            light.setFillColor(
                                (i + 1) === parseInt(window.current_schedule)
                                    ? window.light_on
                                    : window.light_off,
                                'rgb'
                            );
                        } else {
                            light.setAutoDraw(false);
                        }
                    }
                } else {
                    for (let i = 0; i < window.lights.length; i++) {
                        window.lights[i].setAutoDraw(false);
                    }
                }
            }

            window.green_light.setAutoDraw(true);
            window.red_light.setAutoDraw(true);
            window.button_response.setAutoDraw(true);
            window.button_cycle.setAutoDraw(true);
            window.points_display.setAutoDraw(true);
            window.switch_text.setAutoDraw(true);
        };

        window.draw_break = function() {

            // Turn OFF main stimuli ONLY
            window.green_light.setAutoDraw(false);
            window.red_light.setAutoDraw(false);
            window.button_response.setAutoDraw(false);
            window.button_cycle.setAutoDraw(false);

            if (window.lights) {
                for (let light of window.lights) {
                    light.setAutoDraw(false);
                }
            }

            // Turn ON blackout stimuli
            window.green_light_bo.setAutoDraw(true);
            window.red_light_bo.setAutoDraw(true);
            window.points_display.setAutoDraw(true);
            window.response_bo.setAutoDraw(true);
            window.button_cycle_bo.setAutoDraw(true);
            window.timer_text.setAutoDraw(true);
        };

        window.handle_blackout_period = function(blackout_timer) {
            const remaining = Math.max(0, Math.floor(blackout_timer.getTime()));

            const end_keys = psychoJS.eventManager.getKeys(["escape"]);
            if (end_keys.includes("escape")) {
                psychoJS.quit();
                return false;
            }

            if (remaining > 0) {
                window.timer_text.text = `Time Remaining: ${remaining}`;
                window.draw_break();
                return false;
            }

            window.timer_text.text = "Hit 'enter' to continue";
            window.draw_break();

            if (window.read_keys.includes("return")) {
                console.log("BLACKOUT COMPLETE TRIGGERED");
                return true;
            }

            return false;
        };

        window.initialize_trial_stim = function(schedule_manager) {
            if (window.context_image) window.context_image.draw();

            window.green_light.setAutoDraw(true);
            window.red_light.setAutoDraw(true);
            window.button_response.setAutoDraw(true);
            window.button_cycle.setAutoDraw(true);
            window.switch_text.setAutoDraw(true);
            window.points_display.setAutoDraw(true);

            if (window.lights != null) {
                for (let light of window.lights) {
                    light.setAutoDraw(true);
                }
            }
        };

        window.initialize_blackout_stim = function() {
            window.green_light_bo.draw();
            window.red_light_bo.draw();
            window.points_display.draw();
            window.response_bo.draw();
            window.button_cycle_bo.draw();
            window.timer_text.draw();
        };

        window.hide_main_stim = function() {



            window.green_light.setAutoDraw(false);
            window.red_light.setAutoDraw(false);
            window.button_response.setAutoDraw(false);
            window.button_cycle.setAutoDraw(false);

            if (window.lights != null) {
                for (let light of window.lights) {
                    light.setAutoDraw(false);
                }
            }
        };

        window.clear_all_stim = function() {

            window.green_light.setAutoDraw(false);
            window.red_light.setAutoDraw(false);
            window.button_response.setAutoDraw(false);
            window.button_cycle.setAutoDraw(false);
            window.switch_text.setAutoDraw(false);

            window.green_light_bo.setAutoDraw(false);
            window.red_light_bo.setAutoDraw(false);
            window.response_bo.setAutoDraw(false);
            window.button_cycle_bo.setAutoDraw(false);
            window.timer_text.setAutoDraw(false);

            if (window.lights != null) {
                for (let light of window.lights) {
                    light.setAutoDraw(false);
                }
            }
        };

        window.preload_contexts = function(schedule_df) {
            const context_cache = {};
            schedule_df.forEach(row => {
                const schedule = String(window.safeString(row["Schedule_number"])).trim();
                const rawPath = row["Context_Path"];
                const path = window.safeString(rawPath);
                if (!path || typeof path !== "string") {
                    console.log("Invalid context path for schedule:", schedule, rawPath);
                    context_cache[schedule] = null;
                    return;
                }
                const resource = psychoJS.serverManager.getResource(path);
                if (!resource) {
                    console.error("RESOURCE NOT FOUND at preload:", path);
                    context_cache[schedule] = null;
                    return;
                }
                let pos = window.safeTuple(row["Context_Position"]);
                let size = window.safeTuple(row["Context_Size"]);
                let opacity = window.safeFloat(row["Context_Opacity"]);
                let depth = window.safeFloat(row["Context_Depth"]);
                if (isNaN(opacity)) opacity = 1;
                if (isNaN(depth)) depth = -1;

                // Build the ImageStim once here, reuse forever
                context_cache[schedule] = new visual.ImageStim({
                    win: psychoJS.window,
                    name: `context_${schedule}`,
                    image: resource,
                    pos: pos,
                    size: size,
                    opacity: opacity,
                    depth: depth,
                    autoDraw: false
                });
                console.log("Preloaded context for schedule:", schedule);
            });
            return context_cache;
        };

        window.get_context = function() {
            const key = String(window.current_schedule).trim();
            const stim = window.context_cache[key];
            if (!stim) {
                console.log("No context for schedule:", key);
                return null;
            }
            return stim;
        };

        window.sounds = {
            ding: new sound.Sound({
                win: psychoJS.window,
                value: 'stimuli/ding.wav'
            }),
            womp: new sound.Sound({
                win: psychoJS.window,
                value: 'stimuli/ha.wav'
            })
        };

        window.context_cache = window.preload_contexts(window.schedule_df);

        (window.button_response.fillColor === button_color1);
      Begin JS Routine:
        if (typeof Selection_type !== 'undefined' && window.loop_type === 'sequential') {
            window.loop_type = Selection_type.method;
            console.log("Loop type raw:", JSON.stringify(window.loop_type));
            console.log("Is random?", window.loop_type === TrialHandler.Method.RANDOM);
        }

        window.flash_manager = new window.FlashManager();
        window.routine_clock = new util.Clock();
        window.routine_clock.reset();
        window.routine_active = true;
        window.switch_enabled = true;
        window.tab_pressed = false;
        window.continue_routine = true;
        window.current_sound = undefined;
        window.transition_to_extinction = false;
        window.extinction = false;
        window.in_blackout = false;
        window.press_blue_earn_index = 0;
        window.press_blue_loss_index = 0;
        window.press_yellow_earn_index = 0;
        window.press_yellow_loss_index = 0;
        window.blue_earn_proc_value = 1;
        window.blue_loss_proc_value = 1;
        window.yellow_earn_proc_value = 1;
        window.yellow_loss_proc_value = 1;
        window.session_number += 1;

        window.available_schedules = Array.from(new Set(
            window.all_schedules.filter(x => !window.used_schedules.includes(x))
        ));

        window.current_schedule = window.get_new_schedule();

        if (window.current_schedule === undefined) {
            console.error('No available schedules remaining');
            window.continue_routine = false;
            window.schedule_loaded = false;
        } else {
            try {
                console.log(`Loading schedule: ${window.current_schedule}`);

                const schedule_data = window.schedule_df.find(
                    row => row['Schedule_number'] == window.current_schedule
                );

                window.schedule_manager = new window.ScheduleManager(
                    window.safeFloat(schedule_data['Blue_Interval']),
                    window.safeFloat(schedule_data['Yellow_Interval']),
                    window.safeFloat(schedule_data['Blue_Pun_Interval']),
                    window.safeFloat(schedule_data['Yellow_Pun_Interval']),
                    window.safeFloat(schedule_data['Blue_Ratio']),
                    window.safeFloat(schedule_data['Yellow_Ratio']),
                    window.safeFloat(schedule_data['Blue_Pun_Ratio']),
                    window.safeFloat(schedule_data['Yellow_Pun_Ratio']),
                    window.safeFloat(schedule_data['Blue_Random_Interval']),
                    window.safeFloat(schedule_data['Yellow_Random_Interval']),
                    window.safeFloat(schedule_data['Blue_Pun_Random_Interval']),
                    window.safeFloat(schedule_data['Yellow_Pun_Random_Interval']),
                    window.safeFloat(schedule_data['Blue_Random_Ratio']),
                    window.safeFloat(schedule_data['Yellow_Random_Ratio']),
                    window.safeFloat(schedule_data['Blue_Pun_Random_Ratio']),
                    window.safeFloat(schedule_data['Yellow_Pun_Random_Ratio']),
                    window.safeBool(schedule_data['Blue_FH']),
                    window.safeBool(schedule_data['Yellow_FH']),
                    window.safeBool(schedule_data['Blue_Pun_FH']),
                    window.safeBool(schedule_data['Yellow_Pun_FH']),
                    window.safeFloat(schedule_data['Blue_FH_Intervals']),
                    window.safeFloat(schedule_data['Yellow_FH_Intervals']),
                    window.safeFloat(schedule_data['Blue_Pun_FH_Intervals']),
                    window.safeFloat(schedule_data['Yellow_Pun_FH_Intervals']),
                    window.safeString(schedule_data['Blue_FH_Type']),
                    window.safeString(schedule_data['Yellow_FH_Type']),
                    window.safeString(schedule_data['Blue_Pun_FH_Type']),
                    window.safeString(schedule_data['Yellow_Pun_FH_Type']),
                    window.safeFloat(schedule_data['Session_Duration']),
                    window.safeFloat(schedule_data['Blue_Mag']),
                    window.safeFloat(schedule_data['Yellow_Mag']),
                    window.safeFloat(schedule_data['Blue_Pun_Mag']),
                    window.safeFloat(schedule_data['Yellow_Pun_Mag']),
                    window.safeFloat(schedule_data['Changeover_Delay']),
                    window.safeFloat(schedule_data['Blackout_Duration']),
                    window.safeString(schedule_data['Blue_Distribution']),
                    window.safeString(schedule_data['Yellow_Distribution']),
                    window.safeString(schedule_data['Blue_Pun_Distribution']),
                    window.safeString(schedule_data['Yellow_Pun_Distribution']),
                    window.safeFloat(schedule_data['SD_Blue']),
                    window.safeFloat(schedule_data['SD_Yellow']),
                    window.safeFloat(schedule_data['SD_Blue_Pun']),
                    window.safeFloat(schedule_data['SD_Yellow_Pun']),
                    window.safeString(schedule_data['Schedule_Lights']),
                    window.safeString(schedule_data['Context_Path']),
                    window.safeTuple(schedule_data['Context_Position']),
                    window.safeTuple(schedule_data['Context_Size']),
                    window.safeFloat(schedule_data['Context_Opacity']),
                    window.safeFloat(schedule_data['Context_Depth']),
                    window.safeString(schedule_data['Ding_Path']),
                    window.safeString(schedule_data['Womp_Path']),
                    window.safeString(schedule_data['Keyboard_Path'])
                    );

                window.schedule_loaded = true;
                window.schedule_manager.reset_times();
                window.blackout_timer = new util.CountdownTimer(window.schedule_manager.blackout_duration + 1);

                console.log(`Light status: ${window.lights}`);

                window.context_image = window.get_context(window.context_cache, window.current_schedule);

                console.log(`First schedule: ${window.current_schedule}`);

                window.schedule_manager.calculate_next_yellow_earn_time();
                window.schedule_manager.generate_fleshler_hoffman_list();

                console.log(`Blue_FH: ${window.schedule_manager.blue_fh_list}`);
                console.log(`Yellow_FH: ${window.schedule_manager.yellow_fh_list}`);

                window.initialize_blackout_stim();
                window.initialize_trial_stim(window.schedule_manager);

                window.routine_active = true;
                window.continue_routine = true;

            } catch (error) {
                console.error('Error loading schedule:', error);
                window.schedule_loaded = false;
                window.continue_routine = false;
            }
        }
      Begin Routine:
        flash_manager = FlashManager() #'imports' FlashManager() as 'flash_manager'
        routine_clock = core.Clock()
        routine_clock.reset() #Resets routine_clock

        #Initializes booleans
        routine_active = True
        switch_enabled = True
        tab_pressed = False
        continue_routine = True
        current_sound = None
        transition_to_extinction = False
        extinction = False

        #Resets indicies to 0
        press_blue_earn_index = 0
        press_blue_loss_index = 0
        press_yellow_earn_index = 0
        press_yellow_loss_index = 0

        #Reset proc values
        blue_earn_proc_value = 1
        blue_loss_proc_value = 1
        yellow_earn_proc_value = 1
        yellow_loss_proc_value = 1

        session_number += 1

        #Initializes available_schedules
        available_schedules = list(set(all_schedules) - set(used_schedules))

        #Tests is data from CSV is properly extracted
        try:
            current_schedule = get_new_schedule()
            #'Imports' DataFrame
            schedule_data = schedule_df.loc[
            schedule_df['Schedule_number'] == current_schedule].iloc[0]
            schedule_manager = ScheduleManager(
                safe_float(schedule_data['Blue_Interval']), safe_float(schedule_data['Yellow_Interval']),
                safe_float(schedule_data['Blue_Pun_Interval']), safe_float(schedule_data['Yellow_Pun_Interval']),
                safe_float(schedule_data['Blue_Ratio']), safe_float(schedule_data['Yellow_Ratio']),
                safe_float(schedule_data['Blue_Pun_Ratio']), safe_float(schedule_data['Yellow_Pun_Ratio']),
                safe_float(schedule_data['Blue_Random_Ratio']), safe_float(schedule_data['Yellow_Random_Ratio']),
                safe_float(schedule_data['Blue_Pun_Random_Ratio']), safe_float(schedule_data['Yellow_Pun_Random_Ratio']),
                safe_float(schedule_data['Blue_Random_Interval']), safe_float(schedule_data['Yellow_Random_Interval']),
                safe_float(schedule_data['Blue_Pun_Random_Interval']), safe_float(schedule_data['Yellow_Pun_Random_Interval']),
                safe_bool(schedule_data['Blue_FH']), safe_bool(schedule_data['Yellow_FH']),
                safe_bool(schedule_data['Blue_Pun_FH']), safe_bool(schedule_data['Yellow_Pun_FH']),
                safe_float(schedule_data['Blue_FH_Intervals']), safe_float(schedule_data['Yellow_FH_Intervals']),
                safe_float(schedule_data['Blue_Pun_FH_Intervals']), safe_float(schedule_data['Yellow_Pun_FH_Intervals']),
                safe_string(schedule_data['Blue_FH_Type']), safe_string(schedule_data['Yellow_FH_Type']),
                safe_string(schedule_data['Blue_Pun_FH_Type']), safe_string(schedule_data['Yellow_Pun_FH_Type']),
                safe_float(schedule_data['Session_Duration']), safe_float(schedule_data['Blue_Mag']),
                safe_float(schedule_data['Yellow_Mag']), safe_float(schedule_data['Blue_Pun_Mag']),
                safe_float(schedule_data['Yellow_Pun_Mag']), safe_float(schedule_data['Changeover_Delay']),
                safe_float(schedule_data['Blackout_Duration']),
                safe_string(schedule_data['Blue_Distribution']), safe_string(schedule_data['Yellow_Distribution']),
                safe_string(schedule_data['Blue_Pun_Distribution']), safe_string(schedule_data['Yellow_Pun_Distribution']),
                safe_float(schedule_data['SD_Blue']), safe_float(schedule_data['SD_Yellow']),
                safe_float(schedule_data['SD_Blue_Pun']), safe_float(schedule_data['SD_Yellow_Pun']),
                safe_string(schedule_data['Schedule_Lights']), safe_string(schedule_data['Context_Path']),
                safe_tuple(schedule_data['Context_Position']), safe_tuple(schedule_data['Context_Size']),
                safe_float(schedule_data['Context_Opacity']), safe_float(schedule_data['Context_Depth']),
                safe_string(schedule_data['Ding_Path']), safe_string(schedule_data['Womp_Path'])
               )

            #If everything works properly, the program will proceed to the main loop
            schedule_loaded = True
            context_image = get_context(context_cache, current_schedule)
            sounds = get_sounds(sound_cache, current_schedule)
            schedule_manager.reset_times()
            blackout_timer = core.CountdownTimer(schedule_manager.blackout_duration + 1)
            print(f"first schedule: {current_schedule}")
            schedule_manager.calculate_next_yellow_earn_time(button_response)
            schedule_manager.generate_fleshler_hoffman_list()
            print(f"Blue_FH: {schedule_manager.blue_fh_list}")
            print(f"Yellow_FH: {schedule_manager.yellow_fh_list}")
            routine_active = True
            continue_routine = True
            win.flip()

        except Exception as e:
            if current_schedule not in schedule_df['Schedule_number'].values:
                print(f"Schedule {current_schedule} not found in DataFrame")
            print(f"Error loading schedule: {e}")
            continue_routine = False
      Each Frame:
        while continue_routine:
            end_keys = event.getKeys(['escape'])
            if 'escape' in end_keys:
                    sys.exit()

            if routine_active:
                t = routine_clock.getTime()# Get current time
                #Defines changeover delay
                in_changeover_delay = (t - schedule_manager.last_switch_time < schedule_manager.changeover_delay)
                keys = event.getKeys(['space', 'tab'])
                #schedule_manager.generate_one_second_interval() #Interval generator for RI schedules

                # Process tab press outside changeover delay
                if in_changeover_delay and 'tab' in keys:
                    keys.remove('tab')
                    collect_tab()
                tab_pressed = 'tab' in keys

                # Handle space key logic
                if 'space' in keys and in_changeover_delay == False:
                    points, point_earned, press_blue_earn_index, \
                    press_blue_loss_index, press_yellow_earn_index, \
                    press_yellow_loss_index=\
                    handle_space_key(t, schedule_manager, flash_manager, points,
                            button_response, press_blue_earn_index,
                            press_blue_loss_index, press_yellow_earn_index,
                            press_yellow_loss_index, sounds)
                    points_display.text = f'Points: {points}'
                    flash_manager.start_flash('rb', t)
                    collect_space()
                elif 'space' in keys and in_changeover_delay == True:
                    #Still play animation, data collection notes
                    #that the press occurred during the changeover delay
                    flash_manager.start_flash('rb', t)
                    collect_space_changeover()

                # Handle tab press to change button color
                if tab_pressed == True and in_changeover_delay == False:
                    switch_enabled = handle_tab_key(t, flash_manager, button_response, schedule_manager)
                    collect_tab()

                # Update flashes and redraw interface
                flash_manager.update_flashes(t, green_light, red_light, button_response, button_cycle)
                draw_main(win, schedule_manager, context_image, green_light, red_light,
                          button_response, button_cycle, switch_text, points_display, lights, current_schedule)

                # End session if session duration is reached
                if t >= schedule_manager.session_duration:
                    routine_active = False
                    blackout_timer.reset()

            # Manage blackout period logic
            else:
                blackout_timer = core.CountdownTimer(schedule_manager.blackout_duration + 1)
                handle_blackout_period(win, blackout_timer, points_display, response_bo, button_cycle_bo, green_light_bo, red_light_bo)
                # Attempt to switch to a new schedule
                if len(all_schedules) > len(used_schedules):
                    current_schedule = get_new_schedule()
                    schedule_data = schedule_df.loc[schedule_df['Schedule_number'] == current_schedule].iloc[0]
                    schedule_manager = ScheduleManager(
                        safe_float(schedule_data['Blue_Interval']), safe_float(schedule_data['Yellow_Interval']),
                        safe_float(schedule_data['Blue_Pun_Interval']), safe_float(schedule_data['Yellow_Pun_Interval']),
                        safe_float(schedule_data['Blue_Ratio']), safe_float(schedule_data['Yellow_Ratio']),
                        safe_float(schedule_data['Blue_Pun_Ratio']), safe_float(schedule_data['Yellow_Pun_Ratio']),
                        safe_float(schedule_data['Blue_Random_Ratio']), safe_float(schedule_data['Yellow_Random_Ratio']),
                        safe_float(schedule_data['Blue_Pun_Random_Ratio']), safe_float(schedule_data['Yellow_Pun_Random_Ratio']),
                        safe_float(schedule_data['Blue_Random_Interval']), safe_float(schedule_data['Yellow_Random_Interval']),
                        safe_float(schedule_data['Blue_Pun_Random_Interval']), safe_float(schedule_data['Yellow_Pun_Random_Interval']),
                        safe_bool(schedule_data['Blue_FH']), safe_bool(schedule_data['Yellow_FH']),
                        safe_bool(schedule_data['Blue_Pun_FH']), safe_bool(schedule_data['Yellow_Pun_FH']),
                        safe_float(schedule_data['Blue_FH_Intervals']), safe_float(schedule_data['Yellow_FH_Intervals']),
                        safe_float(schedule_data['Blue_Pun_FH_Intervals']), safe_float(schedule_data['Yellow_Pun_FH_Intervals']),
                        safe_string(schedule_data['Blue_FH_Type']), safe_string(schedule_data['Yellow_FH_Type']),
                        safe_string(schedule_data['Blue_Pun_FH_Type']), safe_string(schedule_data['Yellow_Pun_FH_Type']),
                        safe_float(schedule_data['Session_Duration']), safe_float(schedule_data['Blue_Mag']),
                        safe_float(schedule_data['Yellow_Mag']), safe_float(schedule_data['Blue_Pun_Mag']),
                        safe_float(schedule_data['Yellow_Pun_Mag']), safe_float(schedule_data['Changeover_Delay']),
                        safe_float(schedule_data['Blackout_Duration']),
                        safe_string(schedule_data['Blue_Distribution']), safe_string(schedule_data['Yellow_Distribution']),
                        safe_string(schedule_data['Blue_Pun_Distribution']), safe_string(schedule_data['Yellow_Pun_Distribution']),
                        safe_float(schedule_data['SD_Blue']), safe_float(schedule_data['SD_Yellow']),
                        safe_float(schedule_data['SD_Blue_Pun']), safe_float(schedule_data['SD_Yellow_Pun']),
                        safe_string(schedule_data['Schedule_Lights']),
                        safe_string(schedule_data['Context_Path']), safe_tuple(schedule_data['Context_Position']),
                        safe_tuple(schedule_data['Context_Size']), safe_float(schedule_data['Context_Opacity']),
                        safe_float(schedule_data['Context_Depth']),
                        safe_string(schedule_data['Ding_Path']), safe_string(schedule_data['Womp_Path'])
                       )
                    routine_clock.reset()
                    press_blue_earn_index = press_blue_loss_index = press_yellow_earn_index = press_yellow_loss_index = 0
                    blue_earn_proc_value = blue_loss_proc_value = yellow_earn_proc_value = yellow_loss_proc_value = 1
                    schedule_manager.blue_fh_index = schedule_manager.yellow_fh_index = schedule_manager.blue_pun_fh_index = schedule_manager.yellow_pun_fh_index = 0
                    schedule_manager.interval_start = 0
                    context_image = get_context(context_cache, current_schedule)
                    event.clearEvents()
                    session_number += 1
                    print(current_schedule)
                    event.clearEvents()
                    routine_active = True
                else:
                    break
      Each JS Frame:
        continueRoutine = true;

        // IMPORTANT: don't consume keys globally
        window.read_keys = psychoJS.eventManager.getKeys();

        if (window.read_keys.includes('escape')) {
            psychoJS.quit();
        }

        if (typeof window.schedule_df === 'undefined' || typeof window.all_schedules === 'undefined') {
            console.log("Window is undefined");
        } else {

            // =========================
            // RUNNING STATE
            // =========================
            if (window.routine_active) {

                window.t = window.routine_clock.getTime();
                window.in_changeover_delay =
                    (window.t - window.schedule_manager.last_switch_time < window.schedule_manager.changeover_delay);

                if (window.in_changeover_delay && window.read_keys.includes('s')) {
                    window.read_keys.splice(window.read_keys.indexOf('s'), 1);
                    window.collect_tab();
                }

                window.tab_pressed = window.read_keys.includes('s');

                if (window.read_keys.includes('space')) {
                    window.flash_manager.start_flash('rb', window.t, window.button_response);

                    if (!window.in_changeover_delay) {
                        [
                            window.points,
                            window.point_earned,
                            window.press_blue_earn_index,
                            window.press_blue_loss_index,
                            window.press_yellow_earn_index,
                            window.press_yellow_loss_index
                        ] = window.handle_space_key(
                            window.t,
                            window.schedule_manager,
                            window.flash_manager,
                            window.points,
                            window.button_response,
                            window.press_blue_earn_index,
                            window.press_blue_loss_index,
                            window.press_yellow_earn_index,
                            window.press_yellow_loss_index,
                            window.sounds
                        );
                        window.points_display.text = `Points: ${window.points}`;
                        window.collect_space();
                    } else {
                        window.collect_space();
                    }
                }

                if (window.tab_pressed && !window.in_changeover_delay) {
                    window.switch_enabled = window.handle_tab_key(window.t, window.flash_manager);
                    window.collect_tab();
                }

                window.flash_manager.update_flashes(
                    window.t,
                    window.green_light,
                    window.red_light,
                    window.button_response,
                    window.button_cycle
                );

                window.draw_main(window.schedule_manager);

                // --- TRANSITION TO BLACKOUT (ONLY ONCE) ---
                if (window.routine_active && window.t >= window.schedule_manager.session_duration) {
                    console.log("Session ended → starting blackout");

                    window.routine_active = false;

                    if (!window.in_blackout) {
                        window.blackout_timer.reset();
                        window.initialize_blackout_stim();
                        window.in_blackout = true;
                    }
                }

            // =========================
            // BLACKOUT STATE
            // =========================
            } else {

                window.hide_main_stim();
                let blackout_complete = window.handle_blackout_period(window.blackout_timer);

                if (blackout_complete) {

                    // ✅ CRITICAL FIX
                    window.in_blackout = false;
                    if (window.all_schedules.length > window.used_schedules.length) {

                        console.log("schedule grabbed");

                        window.current_schedule = window.get_new_schedule();

                        const schedule_data = window.schedule_df.find(
                            row => row['Schedule_number'] == window.current_schedule
                        );

                        window.schedule_manager = new window.ScheduleManager(
                            window.safeFloat(schedule_data['Blue_Interval']),
                            window.safeFloat(schedule_data['Yellow_Interval']),
                            window.safeFloat(schedule_data['Blue_Pun_Interval']),
                            window.safeFloat(schedule_data['Yellow_Pun_Interval']),
                            window.safeFloat(schedule_data['Blue_Ratio']),
                            window.safeFloat(schedule_data['Yellow_Ratio']),
                            window.safeFloat(schedule_data['Blue_Pun_Ratio']),
                            window.safeFloat(schedule_data['Yellow_Pun_Ratio']),
                            window.safeFloat(schedule_data['Blue_Random_Interval']),
                            window.safeFloat(schedule_data['Yellow_Random_Interval']),
                            window.safeFloat(schedule_data['Blue_Pun_Random_Interval']),
                            window.safeFloat(schedule_data['Yellow_Pun_Random_Interval']),
                            window.safeFloat(schedule_data['Blue_Random_Ratio']),
                            window.safeFloat(schedule_data['Yellow_Random_Ratio']),
                            window.safeFloat(schedule_data['Blue_Pun_Random_Ratio']),
                            window.safeFloat(schedule_data['Yellow_Pun_Random_Ratio']),
                            window.safeBool(schedule_data['Blue_FH']),
                            window.safeBool(schedule_data['Yellow_FH']),
                            window.safeBool(schedule_data['Blue_Pun_FH']),
                            window.safeBool(schedule_data['Yellow_Pun_FH']),
                            window.safeFloat(schedule_data['Blue_FH_Intervals']),
                            window.safeFloat(schedule_data['Yellow_FH_Intervals']),
                            window.safeFloat(schedule_data['Blue_Pun_FH_Intervals']),
                            window.safeFloat(schedule_data['Yellow_Pun_FH_Intervals']),
                            window.safeString(schedule_data['Blue_FH_Type']),
                            window.safeString(schedule_data['Yellow_FH_Type']),
                            window.safeString(schedule_data['Blue_Pun_FH_Type']),
                            window.safeString(schedule_data['Yellow_Pun_FH_Type']),
                            window.safeFloat(schedule_data['Session_Duration']),
                            window.safeFloat(schedule_data['Blue_Mag']),
                            window.safeFloat(schedule_data['Yellow_Mag']),
                            window.safeFloat(schedule_data['Blue_Pun_Mag']),
                            window.safeFloat(schedule_data['Yellow_Pun_Mag']),
                            window.safeFloat(schedule_data['Changeover_Delay']),
                            window.safeFloat(schedule_data['Blackout_Duration']),
                            window.safeString(schedule_data['Blue_Distribution']),
                            window.safeString(schedule_data['Yellow_Distribution']),
                            window.safeString(schedule_data['Blue_Pun_Distribution']),
                            window.safeString(schedule_data['Yellow_Pun_Distribution']),
                            window.safeFloat(schedule_data['SD_Blue']),
                            window.safeFloat(schedule_data['SD_Yellow']),
                            window.safeFloat(schedule_data['SD_Blue_Pun']),
                            window.safeFloat(schedule_data['SD_Yellow_Pun']),
                            window.safeString(schedule_data['Schedule_Lights']),
                            window.safeString(schedule_data['Context_Path']),
                            window.safeTuple(schedule_data['Context_Position']),
                            window.safeTuple(schedule_data['Context_Size']),
                            window.safeFloat(schedule_data['Context_Opacity']),
                            window.safeFloat(schedule_data['Context_Depth']),
                            window.safeString(schedule_data['Ding_Path']),
                            window.safeString(schedule_data['Womp_Path']),
                            window.safeString(schedule_data['Keyboard_Path'])
                        );

                        // RESET STATE CLEANLY
                        window.routine_clock.reset();
                        window.press_blue_earn_index = window.press_blue_loss_index = 0;
                        window.press_yellow_earn_index = window.press_yellow_loss_index = 0;
                        window.blue_earn_proc_value = window.blue_loss_proc_value = 1;
                        window.yellow_earn_proc_value = window.yellow_loss_proc_value = 1;
                        window.blue_fh_index = window.yellow_fh_index = 0;
                        window.blue_pun_fh_index = window.yellow_pun_fh_index = 0;
                        window.schedule_manager.interval_start = 0;
                        window.context_image = window.get_context(window.context_cache, window.current_schedule);

                        psychoJS.eventManager.clearEvents();

                        window.session_number += 1;

                        console.log(window.current_schedule);
                        console.log(`Blue_FH: ${window.schedule_manager.blue_fh_list}`);
                        console.log(`Yellow_FH: ${window.schedule_manager.yellow_fh_list}`);

                        window.initialize_trial_stim(window.schedule_manager);

                        window.routine_active = true;

                    } else {
                        continueRoutine = false;
                        return Scheduler.Event.NEXT;
                    }
                }
            }
        }

        return Scheduler.Event.FLIP_REPEAT;
      End JS Experiment:
        fetch('http://localhost:PORT/stop', { method: 'POST' }).catch(() => {});
      End JS Routine:
        window.all_schedules = window.schedule_df
            .map(row => row['Schedule_number'])
            .filter(s => s !== 'EXT' && s !== 'ACQ' && s !== 'Tutorial' && s !== 'Keyboard_Tutorial');
        console.log(window.all_schedules);
        console.log(`number of initial schedules: ${window.all_schedules.length}`);
        window.used_schedules = [];
        psychoJS.eventManager.clearEvents();
        window.clear_all_stim()
      End Routine:
        #For repeated runs:

        #Restablishes Schedules
        all_schedules = list(schedule_df['Schedule_number'])

        #Removes 'EXT', 'ACQ', and Tutorial from trial block
        try:
            all_schedules.remove('EXT')
            all_schedules.remove('ACQ')
            all_schedules.remove('Tutorial')
            all_schedules.remove('Keyboard_Tutorial')
        #Program will still run if any or all are missing
        except ValueError:
            pass
        #Prints schedules for debugging. I strongly suggest keeping this.
        print(all_schedules)
        print(f"number of initial schedules: {len(all_schedules)}")

        #Sets used schedules to empty
        used_schedules = []

        event.clearEvents()
    CodeComponent auto_js_joint
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        """
        Space to use PsychoPy's auto-JS converter, never enable this
        """

        print(type(x))
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
  Routine Goodbye
    RoutineSettingsComponent Goodbye
      desc = Routine to signal the end of the experiment.
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    CodeComponent goodbye
      Code Type = Both
      Begin Experiment:
        from psychopy import visual, core, event, data

        #Goodbye Message
        goodbye_message = visual.TextStim(win,
            text="Thank you for completing the experiment. Your responses are recorded and you are free to leave the window. Please hit the 'Esc' button to exit the experiment",
            height=0.05, color=[1,1,1], pos=[0, 0])

        def draw_goodbye():
            goodbye_message.draw()
            win.flip()
      Begin JS Experiment:
        window.draw_goodbye = function() {
            window.goodbye_message.draw();
        };
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        window.goodbye = true;
      Begin Routine:
        #Initializes Goodbye
        goodbye = True
        draw_goodbye()
      Each Frame:
        while goodbye:
            keys = event.getKeys(['return'])
            draw_goodbye()
            if 'return' in keys: #Ends experiment
                goodbye = False
                win.flip()
      Each JS Frame:
        continueRoutine = true;

        window.goodbye_message.draw();

        window.end_keys = psychoJS.eventManager.getKeys({ keyList: ["return"] });

        if (window.end_keys.includes("return")) {
            continueRoutine = false;
            return Scheduler.Event.NEXT;
        }

        return Scheduler.Event.FLIP_REPEAT;
  Routine Log_Score
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    CodeComponent logging
      Code Type = Py
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      Begin Experiment:
        #Objects
        score_display = visual.TextStim(win, text='',
        pos=(0, 0.05), height=0.05, color=[-1,-1,-1],
        colorSpace = 'rgb')

        text_box = visual.TextStim(win, text='',
        pos=(0, -0.20), height=0.05, color=[-1,-1,-1],
        colorSpace='rgb')

        amelia_instruction = visual.TextStim(win, text='',
        pos=(0, 0.35), height=0.05)

        #Input text intialized
        input_text = ''

        def load_csv(file_path):
            #Checks if the file exists
            if not os.path.exists(file_path):
                #If false, generates DataFrame
                data = pd.DataFrame(columns=['Initials', 'Score', 'Payout'])
                #Actually creates the file
                data.to_csv(file_path, index=False)
                print(f"File '{file_path}' created with necessary columns.")
            else: #Reads file if it does exist
                data = pd.read_csv(file_path)

            #Check if the required columns exist
            required_columns = ['Initials', 'Score', 'Payout']
            for column in required_columns:
                if column not in data.columns:
                    raise ValueError(f"The CSV file does not contain a '{column}' column.")
            return data

        #Draws enter_high_score objects
        def draw_scores():
            text_box.setText(input_text)
            text_box.draw()
            score_display.draw()
            amelia_instruction.draw()

        amelia_scores_df = load_csv('Group_1_Scores_War.csv')
      Begin Routine:
        #Initializes phases
        log_score = True
        transition_to_goodbye = False
        goodbye = False

        point_earn_rate = 0.02 #Value of each point

        payout = points * point_earn_rate

        #Display the participant's score
        scores_text = (f"Your Score: {points}, Your Payout: ${payout}")

        score_display.color = [1, 1, 1]
        score_display.setText(scores_text)

        #Instructions for the user
        amelia_instruction.setText("Please type in your initials, then hit 'Enter'")

        #Draw the instructions and scores to the screen
        amelia_instruction.draw()
        score_display.draw()
        win.flip()
      Each Frame:
        while log_score:
            end_keys = event.getKeys(['escape'])
            if 'escape' in end_keys:
                    sys.exit()
            keys = event.getKeys()

            #Prevent users from hitting 'obstructive' keys
            #While I could technically disable more, messing
            #with ctrl, alt, and others related to system function
            #might make an IRB uncomfortable
            banned_keys = ['lshift', 'rshift', 'comma', 'period',
                           'apostrophe', 'slash', 'backslash',
                           'semicolon', 'bracketleft', 'bracketright',
                           'minus', 'equal', 'tab', 'capslock',
                           'quoteleft']

            for key in keys:
                if key not in banned_keys:
                    if key in ['return', 'enter']:
                        if len(input_text) == 3:
                            #Goes to goodbye screen
                            transition_to_goodbye = True
                            log_score = False
                    elif key in ['backspace']:
                        input_text = input_text[:-1]  #Removes last character
                    elif len(input_text) < 3:
                        input_text += key.upper() #Three character identifiers are upper case

            #Update high score input
            draw_scores()
            win.flip()

        #Logic to ease transition
        if transition_to_goodbye:
            log_score = False
            goodbye = True
            transition_to_goodbye = False
            break
      End Routine:
        win.flip()
        three_letter_id = input_text
        current_score = points  #Assuming `points` holds the participant's current score

        # Add the new score as a new entry even if the participant ID exists
        new_entry = pd.DataFrame({
            'Initials': [three_letter_id],
            'Score': [current_score],
            'Payout': [point_earn_rate]
        })

        # Append the new entry to the high_scores_df DataFrame
        amelia_scores_df = pd.concat([amelia_scores_df, new_entry], ignore_index=True)

        def save_csv(file_path, df):
            # Ensure the CSV file is saved in sorted order by 'HighScore'
            df.to_csv(file_path, index=False)

        # Save the sorted leaderboard back to the CSV file
        save_csv('Group_1_Scores_War.csv', amelia_scores_df)

        goodbye = True
        win.flip()
        # Refresh the window to display updated data if needed
Flow
  Routine Welcome
  Routine Tutorial
  LoopInitiator Selection_type loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Trial
  LoopTerminator Selection_type
  Routine Log_Score
  Routine Goodbye
